# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  1842  2992  2542      fixation_cross    gabor_042 gabor_069 gabor_158 gabor_094    gabor_042 gabor_069 gabor_158_alt gabor_094_alt      "1_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_042_069_158_094_target_position_1_2_retrieval_position_2"       gabor_circ gabor_021_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_113 gabor_072 gabor_057 gabor_143    gabor_113_alt gabor_072 gabor_057 gabor_143_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_113_072_057_143_target_position_2_3_retrieval_position_2"       gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_152 gabor_127 gabor_066 gabor_044    gabor_152 gabor_127_alt gabor_066 gabor_044_alt      "1_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_152_127_066_044_target_position_1_3_retrieval_position_1"       gabor_152_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_151 gabor_116 gabor_044 gabor_179    gabor_151 gabor_116_alt gabor_044_alt gabor_179      "1_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_151_116_044_179_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_132_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2142      fixation_cross    gabor_005 gabor_180 gabor_048 gabor_073    gabor_005_alt gabor_180 gabor_048 gabor_073_alt      "1_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_005_180_048_073_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_target_position_2_3     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_024_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_065 gabor_172 gabor_128 gabor_152    gabor_065_alt gabor_172_alt gabor_128 gabor_152      "1_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_065_172_128_152_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_057 gabor_096 gabor_075 gabor_012    gabor_057 gabor_096 gabor_075_alt gabor_012_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_057_096_075_012_target_position_1_2_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_003 gabor_155 gabor_131 gabor_112    gabor_003_alt gabor_155 gabor_131 gabor_112_alt      "1_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_003_155_131_112_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_177_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_069 gabor_010 gabor_141 gabor_176    gabor_069_alt gabor_010 gabor_141 gabor_176_alt      "1_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_069_010_141_176_target_position_2_3_retrieval_position_1"       gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_069_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_169 gabor_021 gabor_059 gabor_093    gabor_169_alt gabor_021_alt gabor_059 gabor_093     "1_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_169_021_059_093_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_172 gabor_099 gabor_065 gabor_128    gabor_172 gabor_099_alt gabor_065 gabor_128_alt     "1_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_172_099_065_128_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_178 gabor_046 gabor_160 gabor_116    gabor_178_alt gabor_046 gabor_160_alt gabor_116     "1_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_178_046_160_116_target_position_2_4_retrieval_position_2"       gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_004 gabor_179 gabor_141 gabor_028    gabor_004_alt gabor_179 gabor_141 gabor_028_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_004_179_141_028_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  1892      fixation_cross    gabor_021 gabor_002 gabor_037 gabor_157    gabor_021_alt gabor_002 gabor_037 gabor_157_alt     "1_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_021_002_037_157_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_164 gabor_058 gabor_128 gabor_089    gabor_164 gabor_058_alt gabor_128_alt gabor_089     "1_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_164_058_128_089_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_008 gabor_161 gabor_080 gabor_130    gabor_008_alt gabor_161 gabor_080 gabor_130_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_008_161_080_130_target_position_2_3_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_054_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_056 gabor_119 gabor_012 gabor_165    gabor_056 gabor_119_alt gabor_012_alt gabor_165     "1_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_056_119_012_165_target_position_1_4_retrieval_position_1"       gabor_056_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_085 gabor_048 gabor_161 gabor_030    gabor_085_alt gabor_048 gabor_161 gabor_030_alt     "1_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_085_048_161_030_target_position_2_3_retrieval_position_2"       gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_172 gabor_094 gabor_052 gabor_027    gabor_172 gabor_094 gabor_052_alt gabor_027_alt     "1_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_172_094_052_027_target_position_1_2_retrieval_position_2"       gabor_circ gabor_139_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1842  2992  2442      fixation_cross    gabor_147 gabor_032 gabor_104 gabor_122    gabor_147_alt gabor_032_alt gabor_104 gabor_122     "1_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2450_gabor_patch_orientation_147_032_104_122_target_position_3_4_retrieval_position_2"       gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_082_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_097 gabor_166 gabor_044 gabor_029    gabor_097_alt gabor_166 gabor_044_alt gabor_029     "1_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_097_166_044_029_target_position_2_4_retrieval_position_2"       gabor_circ gabor_166_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_178 gabor_157 gabor_141 gabor_089    gabor_178_alt gabor_157 gabor_141 gabor_089_alt     "1_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_178_157_141_089_target_position_2_3_retrieval_position_2"       gabor_circ gabor_157_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_114 gabor_092 gabor_178 gabor_153    gabor_114 gabor_092_alt gabor_178 gabor_153_alt     "1_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_114_092_178_153_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_124 gabor_056 gabor_098 gabor_169    gabor_124_alt gabor_056_alt gabor_098 gabor_169     "1_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_124_056_098_169_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2292      fixation_cross    gabor_021 gabor_126 gabor_111 gabor_069    gabor_021 gabor_126_alt gabor_111 gabor_069_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2300_gabor_patch_orientation_021_126_111_069_target_position_1_3_retrieval_position_2"       gabor_circ gabor_176_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_176_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_067 gabor_093 gabor_115 gabor_172    gabor_067 gabor_093 gabor_115_alt gabor_172_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_067_093_115_172_target_position_1_2_retrieval_position_2"       gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_178 gabor_045 gabor_001 gabor_155    gabor_178_alt gabor_045 gabor_001_alt gabor_155     "1_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_178_045_001_155_target_position_2_4_retrieval_position_2"       gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_137 gabor_065 gabor_153 gabor_027    gabor_137_alt gabor_065 gabor_153 gabor_027_alt     "1_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_137_065_153_027_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  1992      fixation_cross    gabor_085 gabor_128 gabor_018 gabor_048    gabor_085 gabor_128_alt gabor_018_alt gabor_048     "1_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2000_gabor_patch_orientation_085_128_018_048_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_065_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_060 gabor_178 gabor_099 gabor_149    gabor_060 gabor_178 gabor_099_alt gabor_149_alt     "1_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_060_178_099_149_target_position_1_2_retrieval_position_2"       gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_067 gabor_043 gabor_091 gabor_010    gabor_067_alt gabor_043_alt gabor_091 gabor_010     "1_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_067_043_091_010_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_157 gabor_113 gabor_031 gabor_139    gabor_157_alt gabor_113_alt gabor_031 gabor_139     "1_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_157_113_031_139_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_163 gabor_009 gabor_134 gabor_084    gabor_163 gabor_009 gabor_134_alt gabor_084_alt     "1_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_163_009_134_084_target_position_1_2_retrieval_position_2"       gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_069 gabor_105 gabor_052 gabor_138    gabor_069_alt gabor_105_alt gabor_052 gabor_138     "1_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_069_105_052_138_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_144 gabor_161 gabor_105 gabor_055    gabor_144_alt gabor_161 gabor_105 gabor_055_alt     "1_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_144_161_105_055_target_position_2_3_retrieval_position_2"       gabor_circ gabor_021_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_178 gabor_103 gabor_155 gabor_132    gabor_178 gabor_103_alt gabor_155 gabor_132_alt     "1_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_178_103_155_132_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_155_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2242  2992  2142      fixation_cross    gabor_129 gabor_162 gabor_040 gabor_018    gabor_129 gabor_162_alt gabor_040_alt gabor_018     "1_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2150_gabor_patch_orientation_129_162_040_018_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_032 gabor_166 gabor_061 gabor_140    gabor_032_alt gabor_166 gabor_061_alt gabor_140     "1_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_032_166_061_140_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1942  2992  1942      fixation_cross    gabor_071 gabor_032 gabor_093 gabor_142    gabor_071 gabor_032_alt gabor_093 gabor_142_alt     "1_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_1950_gabor_patch_orientation_071_032_093_142_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_142_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_142_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_071 gabor_014 gabor_143 gabor_098    gabor_071 gabor_014_alt gabor_143 gabor_098_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_071_014_143_098_target_position_1_3_retrieval_position_1"       gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_007 gabor_178 gabor_027 gabor_097    gabor_007 gabor_178_alt gabor_027_alt gabor_097     "1_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_007_178_027_097_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_059 gabor_129 gabor_042 gabor_002    gabor_059 gabor_129 gabor_042_alt gabor_002_alt     "1_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_059_129_042_002_target_position_1_2_retrieval_position_1"       gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_074 gabor_048 gabor_108 gabor_156    gabor_074 gabor_048_alt gabor_108 gabor_156_alt     "1_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_074_048_108_156_target_position_1_3_retrieval_position_1"       gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2142  2992  2342      fixation_cross    gabor_031 gabor_083 gabor_155 gabor_011    gabor_031_alt gabor_083 gabor_155_alt gabor_011     "1_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_031_083_155_011_target_position_2_4_retrieval_position_1"       gabor_171_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_171_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_134 gabor_150 gabor_080 gabor_028    gabor_134 gabor_150_alt gabor_080_alt gabor_028     "1_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_134_150_080_028_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_069 gabor_131 gabor_108 gabor_174    gabor_069_alt gabor_131_alt gabor_108 gabor_174     "1_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_069_131_108_174_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_075 gabor_145 gabor_127 gabor_018    gabor_075 gabor_145 gabor_127_alt gabor_018_alt     "1_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_075_145_127_018_target_position_1_2_retrieval_position_2"       gabor_circ gabor_145_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_050 gabor_014 gabor_160 gabor_087    gabor_050 gabor_014_alt gabor_160_alt gabor_087     "1_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_050_014_160_087_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_136_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  2542      fixation_cross    gabor_156 gabor_106 gabor_041 gabor_180    gabor_156_alt gabor_106 gabor_041_alt gabor_180     "1_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2550_gabor_patch_orientation_156_106_041_180_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_041_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_171 gabor_104 gabor_125 gabor_051    gabor_171 gabor_104 gabor_125_alt gabor_051_alt     "1_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_171_104_125_051_target_position_1_2_retrieval_position_1"       gabor_035_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_017 gabor_175 gabor_152 gabor_002    gabor_017 gabor_175_alt gabor_152_alt gabor_002     "1_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_017_175_152_002_target_position_1_4_retrieval_position_1"       gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2592      fixation_cross    gabor_073 gabor_144 gabor_005 gabor_028    gabor_073_alt gabor_144_alt gabor_005 gabor_028     "1_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_073_144_005_028_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_135 gabor_097 gabor_013 gabor_153    gabor_135_alt gabor_097 gabor_013_alt gabor_153     "1_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_135_097_013_153_target_position_2_4_retrieval_position_2"       gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_179 gabor_039 gabor_161 gabor_122    gabor_179 gabor_039 gabor_161_alt gabor_122_alt     "1_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_179_039_161_122_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_122_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_013 gabor_146 gabor_060 gabor_035    gabor_013_alt gabor_146 gabor_060_alt gabor_035     "1_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_013_146_060_035_target_position_2_4_retrieval_position_2"       gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_176 gabor_119 gabor_049 gabor_137    gabor_176_alt gabor_119 gabor_049_alt gabor_137     "1_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_176_119_049_137_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_128 gabor_015 gabor_160 gabor_050    gabor_128 gabor_015_alt gabor_160_alt gabor_050     "1_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_128_015_160_050_target_position_1_4_retrieval_position_1"       gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_129 gabor_002 gabor_159 gabor_051    gabor_129_alt gabor_002_alt gabor_159 gabor_051     "1_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_129_002_159_051_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_019_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_165 gabor_080 gabor_025 gabor_060    gabor_165_alt gabor_080_alt gabor_025 gabor_060     "1_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_165_080_025_060_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_107_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_165 gabor_142 gabor_110 gabor_085    gabor_165 gabor_142_alt gabor_110_alt gabor_085     "1_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_165_142_110_085_target_position_1_4_retrieval_position_1"       gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  1892      fixation_cross    gabor_122 gabor_098 gabor_055 gabor_008    gabor_122 gabor_098_alt gabor_055_alt gabor_008     "1_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_122_098_055_008_target_position_1_4_retrieval_position_2"       gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_098_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_085 gabor_005 gabor_033 gabor_114    gabor_085_alt gabor_005_alt gabor_033 gabor_114     "1_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_085_005_033_114_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_065 gabor_084 gabor_108 gabor_037    gabor_065 gabor_084_alt gabor_108 gabor_037_alt     "1_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_065_084_108_037_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_155_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2192      fixation_cross    gabor_024 gabor_178 gabor_065 gabor_148    gabor_024 gabor_178_alt gabor_065 gabor_148_alt     "1_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_024_178_065_148_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_130 gabor_178 gabor_152 gabor_001    gabor_130_alt gabor_178 gabor_152 gabor_001_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_130_178_152_001_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_152_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2442      fixation_cross    gabor_113 gabor_058 gabor_146 gabor_008    gabor_113 gabor_058_alt gabor_146 gabor_008_alt     "1_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_113_058_146_008_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_033 gabor_171 gabor_156 gabor_004    gabor_033 gabor_171_alt gabor_156 gabor_004_alt     "1_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_033_171_156_004_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_156_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_168 gabor_095 gabor_009 gabor_131    gabor_168 gabor_095 gabor_009_alt gabor_131_alt     "1_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_168_095_009_131_target_position_1_2_retrieval_position_2"       gabor_circ gabor_095_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_047 gabor_163 gabor_084 gabor_114    gabor_047_alt gabor_163_alt gabor_084 gabor_114     "1_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_047_163_084_114_target_position_3_4_retrieval_position_2"       gabor_circ gabor_163_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_172 gabor_093 gabor_113 gabor_134    gabor_172 gabor_093 gabor_113_alt gabor_134_alt     "1_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_172_093_113_134_target_position_1_2_retrieval_position_2"       gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  