# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;   
	  bitmap fixation_cross_black; x=0; y=0;   
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_117 gabor_083 gabor_150 gabor_043    gabor_117 gabor_083_alt gabor_150 gabor_043_alt      "1_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_117_083_150_043_target_position_1_3_retrieval_position_1"       gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_095 gabor_129 gabor_073 gabor_160    gabor_095 gabor_129_alt gabor_073 gabor_160_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_095_129_073_160_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_023_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_112 gabor_006 gabor_036 gabor_161    gabor_112 gabor_006_alt gabor_036 gabor_161_alt      "1_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_112_006_036_161_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_122 gabor_077 gabor_101 gabor_057    gabor_122_alt gabor_077_alt gabor_101 gabor_057      "1_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_122_077_101_057_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  1942      fixation_cross    gabor_170 gabor_123 gabor_138 gabor_002    gabor_170 gabor_123_alt gabor_138_alt gabor_002      "1_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_1950_gabor_patch_orientation_170_123_138_002_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_017 gabor_128 gabor_050 gabor_072    gabor_017 gabor_128 gabor_050_alt gabor_072_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_017_128_050_072_target_position_1_2_retrieval_position_2"       gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_153 gabor_008 gabor_030 gabor_113    gabor_153 gabor_008_alt gabor_030 gabor_113_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_153_008_030_113_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_163 gabor_104 gabor_014 gabor_135    gabor_163_alt gabor_104 gabor_014_alt gabor_135      "1_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_163_104_014_135_target_position_2_4_retrieval_position_2"       gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_146 gabor_097 gabor_031 gabor_016    gabor_146_alt gabor_097 gabor_031_alt gabor_016      "1_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_146_097_031_016_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_108 gabor_022 gabor_082 gabor_049    gabor_108 gabor_022 gabor_082_alt gabor_049_alt     "1_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_108_022_082_049_target_position_1_2_retrieval_position_1"       gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_098 gabor_114 gabor_034 gabor_070    gabor_098_alt gabor_114 gabor_034_alt gabor_070     "1_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_098_114_034_070_target_position_2_4_retrieval_position_2"       gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_024 gabor_048 gabor_091 gabor_072    gabor_024 gabor_048 gabor_091_alt gabor_072_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_024_048_091_072_target_position_1_2_retrieval_position_2"       gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2042  2992  2542      fixation_cross    gabor_175 gabor_100 gabor_057 gabor_085    gabor_175 gabor_100 gabor_057_alt gabor_085_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2550_gabor_patch_orientation_175_100_057_085_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_057_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_057_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_171 gabor_142 gabor_013 gabor_121    gabor_171_alt gabor_142_alt gabor_013 gabor_121     "1_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_171_142_013_121_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_032 gabor_166 gabor_116 gabor_053    gabor_032_alt gabor_166_alt gabor_116 gabor_053     "1_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_032_166_116_053_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  1942      fixation_cross    gabor_060 gabor_037 gabor_106 gabor_169    gabor_060_alt gabor_037 gabor_106 gabor_169_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_060_037_106_169_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_169_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_070 gabor_115 gabor_029 gabor_135    gabor_070 gabor_115 gabor_029_alt gabor_135_alt     "1_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_070_115_029_135_target_position_1_2_retrieval_position_2"       gabor_circ gabor_115_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_120 gabor_135 gabor_005 gabor_166    gabor_120 gabor_135_alt gabor_005 gabor_166_alt     "1_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_120_135_005_166_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_051_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2592      fixation_cross    gabor_090 gabor_003 gabor_147 gabor_114    gabor_090_alt gabor_003 gabor_147_alt gabor_114     "1_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_090_003_147_114_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_064_framed    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2092      fixation_cross    gabor_016 gabor_126 gabor_103 gabor_067    gabor_016 gabor_126_alt gabor_103_alt gabor_067     "1_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2100_gabor_patch_orientation_016_126_103_067_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_103_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_168 gabor_037 gabor_057 gabor_119    gabor_168 gabor_037 gabor_057_alt gabor_119_alt     "1_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_168_037_057_119_target_position_1_2_retrieval_position_2"       gabor_circ gabor_037_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_063 gabor_122 gabor_143 gabor_099    gabor_063 gabor_122 gabor_143_alt gabor_099_alt     "1_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_063_122_143_099_target_position_1_2_retrieval_position_2"       gabor_circ gabor_122_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_085 gabor_027 gabor_117 gabor_156    gabor_085 gabor_027_alt gabor_117 gabor_156_alt     "1_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_085_027_117_156_target_position_1_3_retrieval_position_1"       gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_094 gabor_079 gabor_005 gabor_141    gabor_094_alt gabor_079 gabor_005 gabor_141_alt     "1_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_094_079_005_141_target_position_2_3_retrieval_position_2"       gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_067 gabor_142 gabor_037 gabor_099    gabor_067 gabor_142 gabor_037_alt gabor_099_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_067_142_037_099_target_position_1_2_retrieval_position_1"       gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2242  2992  1992      fixation_cross    gabor_048 gabor_119 gabor_093 gabor_033    gabor_048 gabor_119_alt gabor_093_alt gabor_033     "1_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_048_119_093_033_target_position_1_4_retrieval_position_2"       gabor_circ gabor_072_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_072_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_117 gabor_135 gabor_074 gabor_093    gabor_117_alt gabor_135 gabor_074 gabor_093_alt     "1_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_117_135_074_093_target_position_2_3_retrieval_position_2"       gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_143 gabor_029 gabor_069 gabor_084    gabor_143 gabor_029_alt gabor_069_alt gabor_084     "1_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_143_029_069_084_target_position_1_4_retrieval_position_1"       gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_028 gabor_057 gabor_072 gabor_146    gabor_028_alt gabor_057_alt gabor_072 gabor_146     "1_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_028_057_072_146_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_146_framed    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_064 gabor_049 gabor_103 gabor_169    gabor_064 gabor_049_alt gabor_103 gabor_169_alt     "1_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_064_049_103_169_target_position_1_3_retrieval_position_1"       gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_138 gabor_117 gabor_085 gabor_032    gabor_138_alt gabor_117 gabor_085_alt gabor_032     "1_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_138_117_085_032_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2192      fixation_cross    gabor_030 gabor_054 gabor_165 gabor_077    gabor_030_alt gabor_054_alt gabor_165 gabor_077     "1_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2200_gabor_patch_orientation_030_054_165_077_target_position_3_4_retrieval_position_2"       gabor_circ gabor_103_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_103_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_043 gabor_012 gabor_155 gabor_122    gabor_043 gabor_012 gabor_155_alt gabor_122_alt     "1_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_043_012_155_122_target_position_1_2_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_170 gabor_082 gabor_126 gabor_103    gabor_170 gabor_082_alt gabor_126_alt gabor_103     "1_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_170_082_126_103_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_103_framed    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_041 gabor_175 gabor_012 gabor_097    gabor_041_alt gabor_175 gabor_012_alt gabor_097     "1_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_041_175_012_097_target_position_2_4_retrieval_position_2"       gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_158 gabor_015 gabor_036 gabor_088    gabor_158_alt gabor_015_alt gabor_036 gabor_088     "1_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_158_015_036_088_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_017 gabor_126 gabor_038 gabor_143    gabor_017 gabor_126_alt gabor_038 gabor_143_alt     "1_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_017_126_038_143_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_097_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_111 gabor_074 gabor_001 gabor_051    gabor_111_alt gabor_074 gabor_001 gabor_051_alt     "1_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_111_074_001_051_target_position_2_3_retrieval_position_2"       gabor_circ gabor_028_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2092      fixation_cross    gabor_093 gabor_142 gabor_016 gabor_031    gabor_093_alt gabor_142 gabor_016_alt gabor_031     "1_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2100_gabor_patch_orientation_093_142_016_031_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_061_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_061_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_040 gabor_088 gabor_128 gabor_023    gabor_040_alt gabor_088_alt gabor_128 gabor_023     "1_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_040_088_128_023_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_010 gabor_124 gabor_039 gabor_099    gabor_010 gabor_124 gabor_039_alt gabor_099_alt     "1_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_010_124_039_099_target_position_1_2_retrieval_position_1"       gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_052 gabor_073 gabor_026 gabor_090    gabor_052 gabor_073 gabor_026_alt gabor_090_alt     "1_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_052_073_026_090_target_position_1_2_retrieval_position_1"       gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_123 gabor_052 gabor_016 gabor_172    gabor_123_alt gabor_052 gabor_016_alt gabor_172     "1_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_123_052_016_172_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_028 gabor_096 gabor_012 gabor_134    gabor_028 gabor_096_alt gabor_012 gabor_134_alt     "1_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_028_096_012_134_target_position_1_3_retrieval_position_1"       gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  2392      fixation_cross    gabor_149 gabor_035 gabor_063 gabor_094    gabor_149 gabor_035_alt gabor_063_alt gabor_094     "1_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2400_gabor_patch_orientation_149_035_063_094_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_063_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_172 gabor_011 gabor_048 gabor_137    gabor_172 gabor_011_alt gabor_048 gabor_137_alt     "1_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_172_011_048_137_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_048_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_102 gabor_122 gabor_179 gabor_152    gabor_102 gabor_122 gabor_179_alt gabor_152_alt     "1_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_102_122_179_152_target_position_1_2_retrieval_position_2"       gabor_circ gabor_073_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_108 gabor_047 gabor_072 gabor_153    gabor_108_alt gabor_047 gabor_072_alt gabor_153     "1_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_108_047_072_153_target_position_2_4_retrieval_position_2"       gabor_circ gabor_092_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2442      fixation_cross    gabor_038 gabor_068 gabor_123 gabor_002    gabor_038 gabor_068_alt gabor_123_alt gabor_002     "1_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_038_068_123_002_target_position_1_4_retrieval_position_1"       gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_146 gabor_094 gabor_056 gabor_074    gabor_146 gabor_094_alt gabor_056 gabor_074_alt     "1_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_146_094_056_074_target_position_1_3_retrieval_position_1"       gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2042  2992  1892      fixation_cross    gabor_158 gabor_039 gabor_003 gabor_082    gabor_158 gabor_039 gabor_003_alt gabor_082_alt     "1_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_1900_gabor_patch_orientation_158_039_003_082_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_107 gabor_020 gabor_170 gabor_146    gabor_107 gabor_020_alt gabor_170_alt gabor_146     "1_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_107_020_170_146_target_position_1_4_retrieval_position_1"       gabor_107_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_019 gabor_035 gabor_170 gabor_100    gabor_019 gabor_035_alt gabor_170_alt gabor_100     "1_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_019_035_170_100_target_position_1_4_retrieval_position_1"       gabor_019_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_035 gabor_092 gabor_068 gabor_006    gabor_035_alt gabor_092 gabor_068_alt gabor_006     "1_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_035_092_068_006_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_006_framed    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_083 gabor_044 gabor_150 gabor_125    gabor_083 gabor_044_alt gabor_150_alt gabor_125     "1_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_083_044_150_125_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_129 gabor_060 gabor_017 gabor_146    gabor_129 gabor_060_alt gabor_017 gabor_146_alt     "1_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_129_060_017_146_target_position_1_3_retrieval_position_1"       gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_067 gabor_016 gabor_133 gabor_046    gabor_067_alt gabor_016 gabor_133 gabor_046_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_067_016_133_046_target_position_2_3_retrieval_position_2"       gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1992  2992  1942      fixation_cross    gabor_074 gabor_142 gabor_037 gabor_104    gabor_074 gabor_142_alt gabor_037 gabor_104_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_1950_gabor_patch_orientation_074_142_037_104_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_104_framed    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_104_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_179 gabor_089 gabor_024 gabor_059    gabor_179 gabor_089 gabor_024_alt gabor_059_alt     "1_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_179_089_024_059_target_position_1_2_retrieval_position_2"       gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_021 gabor_081 gabor_170 gabor_060    gabor_021 gabor_081 gabor_170_alt gabor_060_alt     "1_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_021_081_170_060_target_position_1_2_retrieval_position_2"       gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_140 gabor_033 gabor_095 gabor_176    gabor_140_alt gabor_033 gabor_095 gabor_176_alt     "1_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_140_033_095_176_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_050_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_177 gabor_094 gabor_025 gabor_151    gabor_177_alt gabor_094 gabor_025 gabor_151_alt     "1_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_177_094_025_151_target_position_2_3_retrieval_position_2"       gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2142      fixation_cross    gabor_052 gabor_074 gabor_142 gabor_115    gabor_052_alt gabor_074 gabor_142_alt gabor_115     "1_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2150_gabor_patch_orientation_052_074_142_115_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_142_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_142_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_032 gabor_102 gabor_161 gabor_072    gabor_032_alt gabor_102_alt gabor_161 gabor_072     "1_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_032_102_161_072_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_072_framed    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_085 gabor_004 gabor_060 gabor_019    gabor_085_alt gabor_004 gabor_060 gabor_019_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_085_004_060_019_target_position_2_3_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  2342      fixation_cross    gabor_102 gabor_156 gabor_171 gabor_037    gabor_102 gabor_156_alt gabor_171_alt gabor_037     "1_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_102_156_171_037_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_053 gabor_031 gabor_097 gabor_076    gabor_053 gabor_031_alt gabor_097 gabor_076_alt     "1_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_053_031_097_076_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_097_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_006 gabor_156 gabor_171 gabor_082    gabor_006_alt gabor_156_alt gabor_171 gabor_082     "1_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_006_156_171_082_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_133 gabor_081 gabor_111 gabor_066    gabor_133_alt gabor_081 gabor_111_alt gabor_066     "1_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_133_081_111_066_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1792  2992  2442      fixation_cross    gabor_101 gabor_121 gabor_036 gabor_151    gabor_101 gabor_121_alt gabor_036 gabor_151_alt     "1_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_101_121_036_151_target_position_1_3_retrieval_position_2"       gabor_circ gabor_168_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_168_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
 
};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  