# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_110 gabor_051 gabor_177 gabor_003    gabor_110_alt gabor_051 gabor_177_alt gabor_003      "1_1_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_110_051_177_003_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_1_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_152 gabor_171 gabor_088 gabor_127    gabor_152_alt gabor_171 gabor_088_alt gabor_127      "1_2_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_152_171_088_127_target_position_1_3_retrieval_position_1"          gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_2_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_033 gabor_006 gabor_114 gabor_078    gabor_033_alt gabor_006 gabor_114 gabor_078_alt      "1_3_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_033_006_114_078_target_position_1_4_retrieval_position_1"          gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_3_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_167 gabor_113 gabor_091 gabor_130    gabor_167 gabor_113_alt gabor_091_alt gabor_130      "1_4_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_167_113_091_130_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_4_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2192  2992  2492      fixation_cross    gabor_038 gabor_126 gabor_150 gabor_002    gabor_038 gabor_126 gabor_150_alt gabor_002_alt      "1_5_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2500_gabor_patch_orientation_038_126_150_002_target_position_3_4_retrieval_position_1"          gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_5_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_038_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_036 gabor_174 gabor_009 gabor_054    gabor_036 gabor_174_alt gabor_009 gabor_054_alt      "1_6_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_036_174_009_054_target_position_2_4_retrieval_position_2"          gabor_circ gabor_125_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_6_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_165 gabor_148 gabor_084 gabor_026    gabor_165 gabor_148 gabor_084_alt gabor_026_alt      "1_7_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_165_148_084_026_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_7_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_086 gabor_157 gabor_124 gabor_002    gabor_086_alt gabor_157_alt gabor_124 gabor_002      "1_8_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_086_157_124_002_target_position_1_2_retrieval_position_1"          gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_8_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_118 gabor_054 gabor_165 gabor_138    gabor_118 gabor_054_alt gabor_165 gabor_138_alt      "1_9_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_118_054_165_138_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_9_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2392      fixation_cross    gabor_163 gabor_030 gabor_008 gabor_140    gabor_163 gabor_030_alt gabor_008 gabor_140_alt     "1_10_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_163_030_008_140_target_position_2_4_retrieval_position_1"          gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_10_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_117_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_125 gabor_163 gabor_036 gabor_148    gabor_125_alt gabor_163 gabor_036 gabor_148_alt     "1_11_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_125_163_036_148_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2592      fixation_cross    gabor_161 gabor_077 gabor_094 gabor_138    gabor_161 gabor_077_alt gabor_094_alt gabor_138     "1_12_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_161_077_094_138_target_position_2_3_retrieval_position_2"          gabor_circ gabor_077_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_12_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_148 gabor_174 gabor_037 gabor_105    gabor_148 gabor_174_alt gabor_037_alt gabor_105     "1_13_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_148_174_037_105_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_037_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_13_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_042 gabor_097 gabor_120 gabor_155    gabor_042 gabor_097 gabor_120_alt gabor_155_alt     "1_14_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_042_097_120_155_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_072_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_14_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2192  2992  2342      fixation_cross    gabor_006 gabor_087 gabor_146 gabor_163    gabor_006_alt gabor_087 gabor_146 gabor_163_alt     "1_15_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2350_gabor_patch_orientation_006_087_146_163_target_position_1_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_15_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_002 gabor_174 gabor_135 gabor_065    gabor_002 gabor_174 gabor_135_alt gabor_065_alt     "1_16_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_002_174_135_065_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_16_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_013 gabor_100 gabor_159 gabor_119    gabor_013_alt gabor_100 gabor_159 gabor_119_alt     "1_17_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_013_100_159_119_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_073_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_105 gabor_084 gabor_067 gabor_042    gabor_105 gabor_084 gabor_067_alt gabor_042_alt     "1_18_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_105_084_067_042_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_18_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2442      fixation_cross    gabor_037 gabor_062 gabor_177 gabor_119    gabor_037_alt gabor_062_alt gabor_177 gabor_119     "1_19_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_037_062_177_119_target_position_1_2_retrieval_position_1"          gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_19_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1992  2992  2092      fixation_cross    gabor_173 gabor_057 gabor_041 gabor_084    gabor_173 gabor_057_alt gabor_041_alt gabor_084     "1_20_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2100_gabor_patch_orientation_173_057_041_084_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_20_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_130 gabor_161 gabor_044 gabor_176    gabor_130 gabor_161_alt gabor_044_alt gabor_176     "1_21_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_130_161_044_176_target_position_2_3_retrieval_position_2"          gabor_circ gabor_024_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_21_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_048 gabor_108 gabor_003 gabor_070    gabor_048_alt gabor_108 gabor_003 gabor_070_alt     "1_22_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_048_108_003_070_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_070_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_22_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_122 gabor_017 gabor_091 gabor_053    gabor_122 gabor_017 gabor_091_alt gabor_053_alt     "1_23_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_122_017_091_053_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_23_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_167 gabor_083 gabor_117 gabor_060    gabor_167_alt gabor_083 gabor_117 gabor_060_alt     "1_24_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_167_083_117_060_target_position_1_4_retrieval_position_1"          gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_24_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_067 gabor_135 gabor_009 gabor_024    gabor_067_alt gabor_135_alt gabor_009 gabor_024     "1_25_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_067_135_009_024_target_position_1_2_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_25_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1792  2992  2092      fixation_cross    gabor_178 gabor_033 gabor_072 gabor_108    gabor_178_alt gabor_033_alt gabor_072 gabor_108     "1_26_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_178_033_072_108_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_153_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_153_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_047 gabor_013 gabor_166 gabor_081    gabor_047 gabor_013_alt gabor_166 gabor_081_alt     "1_27_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_047_013_166_081_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_27_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_082 gabor_112 gabor_057 gabor_034    gabor_082 gabor_112_alt gabor_057 gabor_034_alt     "1_28_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_082_112_057_034_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_28_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_085 gabor_053 gabor_008 gabor_122    gabor_085_alt gabor_053 gabor_008 gabor_122_alt     "1_29_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_085_053_008_122_target_position_1_4_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_29_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_125 gabor_094 gabor_162 gabor_056    gabor_125_alt gabor_094 gabor_162 gabor_056_alt     "1_30_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_125_094_162_056_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_30_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_180 gabor_153 gabor_044 gabor_017    gabor_180 gabor_153 gabor_044_alt gabor_017_alt     "1_31_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_180_153_044_017_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_31_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2492      fixation_cross    gabor_067 gabor_090 gabor_180 gabor_017    gabor_067 gabor_090_alt gabor_180 gabor_017_alt     "1_32_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_067_090_180_017_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_32_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_027 gabor_154 gabor_011 gabor_133    gabor_027_alt gabor_154 gabor_011 gabor_133_alt     "1_33_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_027_154_011_133_target_position_1_4_retrieval_position_1"          gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_33_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2592      fixation_cross    gabor_086 gabor_071 gabor_176 gabor_159    gabor_086_alt gabor_071 gabor_176_alt gabor_159     "1_34_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_086_071_176_159_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_34_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_104 gabor_039 gabor_155 gabor_127    gabor_104 gabor_039 gabor_155_alt gabor_127_alt     "1_35_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_104_039_155_127_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_35_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1792  2992  2392      fixation_cross    gabor_102 gabor_052 gabor_035 gabor_171    gabor_102 gabor_052_alt gabor_035_alt gabor_171     "1_36_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2400_gabor_patch_orientation_102_052_035_171_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_36_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_124_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_128 gabor_001 gabor_162 gabor_022    gabor_128_alt gabor_001_alt gabor_162 gabor_022     "1_37_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_128_001_162_022_target_position_1_2_retrieval_position_1"          gabor_079_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_37_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_054 gabor_138 gabor_093 gabor_180    gabor_054_alt gabor_138 gabor_093 gabor_180_alt     "1_38_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_054_138_093_180_target_position_1_4_retrieval_position_1"          gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_38_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_016 gabor_054 gabor_085 gabor_139    gabor_016 gabor_054_alt gabor_085_alt gabor_139     "1_39_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_016_054_085_139_target_position_2_3_retrieval_position_2"          gabor_circ gabor_101_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_39_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_098 gabor_012 gabor_117 gabor_159    gabor_098 gabor_012 gabor_117_alt gabor_159_alt     "1_40_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_098_012_117_159_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_40_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2142  2992  1992      fixation_cross    gabor_156 gabor_017 gabor_173 gabor_090    gabor_156 gabor_017 gabor_173_alt gabor_090_alt     "1_41_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2000_gabor_patch_orientation_156_017_173_090_target_position_3_4_retrieval_position_2"          gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_41_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_017_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_009 gabor_166 gabor_030 gabor_145    gabor_009 gabor_166 gabor_030_alt gabor_145_alt     "1_42_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_009_166_030_145_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_42_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_147 gabor_025 gabor_061 gabor_095    gabor_147 gabor_025 gabor_061_alt gabor_095_alt     "1_43_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_147_025_061_095_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_43_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_169 gabor_143 gabor_126 gabor_038    gabor_169 gabor_143_alt gabor_126_alt gabor_038     "1_44_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_169_143_126_038_target_position_2_3_retrieval_position_2"          gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_44_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_033 gabor_160 gabor_087 gabor_001    gabor_033 gabor_160_alt gabor_087_alt gabor_001     "1_45_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_033_160_087_001_target_position_2_3_retrieval_position_2"          gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_45_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1942  2992  2592      fixation_cross    gabor_070 gabor_153 gabor_130 gabor_092    gabor_070 gabor_153_alt gabor_130_alt gabor_092     "1_46_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2600_gabor_patch_orientation_070_153_130_092_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_46_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_092_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_007 gabor_023 gabor_136 gabor_093    gabor_007_alt gabor_023 gabor_136_alt gabor_093     "1_47_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_007_023_136_093_target_position_1_3_retrieval_position_1"          gabor_056_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_47_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_084 gabor_121 gabor_010 gabor_168    gabor_084 gabor_121 gabor_010_alt gabor_168_alt     "1_48_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_084_121_010_168_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_48_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_082 gabor_059 gabor_101 gabor_119    gabor_082_alt gabor_059 gabor_101_alt gabor_119     "1_49_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_082_059_101_119_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_49_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2042  2992  2392      fixation_cross    gabor_036 gabor_102 gabor_149 gabor_015    gabor_036 gabor_102 gabor_149_alt gabor_015_alt     "1_50_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2400_gabor_patch_orientation_036_102_149_015_target_position_3_4_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_50_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_146 gabor_067 gabor_175 gabor_125    gabor_146_alt gabor_067_alt gabor_175 gabor_125     "1_51_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_146_067_175_125_target_position_1_2_retrieval_position_1"          gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_132 gabor_046 gabor_074 gabor_015    gabor_132_alt gabor_046_alt gabor_074 gabor_015     "1_52_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_132_046_074_015_target_position_1_2_retrieval_position_2"          gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_52_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_170 gabor_009 gabor_039 gabor_057    gabor_170 gabor_009_alt gabor_039_alt gabor_057     "1_53_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_170_009_039_057_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_53_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_085 gabor_019 gabor_064 gabor_047    gabor_085 gabor_019 gabor_064_alt gabor_047_alt     "1_54_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_085_019_064_047_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_54_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_092 gabor_146 gabor_026 gabor_161    gabor_092_alt gabor_146 gabor_026_alt gabor_161     "1_55_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_092_146_026_161_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_026_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_55_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  2092      fixation_cross    gabor_128 gabor_180 gabor_023 gabor_159    gabor_128_alt gabor_180_alt gabor_023 gabor_159     "1_56_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2100_gabor_patch_orientation_128_180_023_159_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_110_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_56_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_110_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_036 gabor_091 gabor_143 gabor_175    gabor_036 gabor_091 gabor_143_alt gabor_175_alt     "1_57_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_036_091_143_175_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_007_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_57_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_074 gabor_095 gabor_030 gabor_157    gabor_074 gabor_095_alt gabor_030_alt gabor_157     "1_58_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_074_095_030_157_target_position_2_3_retrieval_position_2"          gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_58_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2192      fixation_cross    gabor_173 gabor_037 gabor_013 gabor_067    gabor_173 gabor_037 gabor_013_alt gabor_067_alt     "1_59_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_173_037_013_067_target_position_3_4_retrieval_position_2"          gabor_circ gabor_037_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_59_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_037_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_017 gabor_126 gabor_150 gabor_064    gabor_017 gabor_126 gabor_150_alt gabor_064_alt     "1_60_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_017_126_150_064_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_60_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_092 gabor_023 gabor_162 gabor_177    gabor_092 gabor_023 gabor_162_alt gabor_177_alt     "1_61_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_092_023_162_177_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_162_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_61_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_178 gabor_049 gabor_016 gabor_135    gabor_178_alt gabor_049_alt gabor_016 gabor_135     "1_62_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_178_049_016_135_target_position_1_2_retrieval_position_2"          gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_62_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_087 gabor_137 gabor_155 gabor_017    gabor_087 gabor_137 gabor_155_alt gabor_017_alt     "1_63_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_087_137_155_017_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_63_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_087 gabor_006 gabor_115 gabor_176    gabor_087_alt gabor_006_alt gabor_115 gabor_176     "1_64_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_087_006_115_176_target_position_1_2_retrieval_position_2"          gabor_circ gabor_006_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_64_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2092  2992  2142      fixation_cross    gabor_108 gabor_129 gabor_052 gabor_021    gabor_108 gabor_129_alt gabor_052_alt gabor_021     "1_65_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_108_129_052_021_target_position_2_3_retrieval_position_1"          gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_65_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_012 gabor_035 gabor_169 gabor_097    gabor_012 gabor_035 gabor_169_alt gabor_097_alt     "1_66_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_012_035_169_097_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_66_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2542      fixation_cross    gabor_010 gabor_148 gabor_075 gabor_098    gabor_010_alt gabor_148_alt gabor_075 gabor_098     "1_67_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_010_148_075_098_target_position_1_2_retrieval_position_1"          gabor_058_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_67_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_180 gabor_113 gabor_067 gabor_052    gabor_180_alt gabor_113 gabor_067_alt gabor_052     "1_68_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_180_113_067_052_target_position_1_3_retrieval_position_1"          gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_68_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1842  2992  2392      fixation_cross    gabor_037 gabor_060 gabor_150 gabor_091    gabor_037 gabor_060_alt gabor_150 gabor_091_alt     "1_69_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_037_060_150_091_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_011_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_69_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_011_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_129 gabor_175 gabor_061 gabor_111    gabor_129 gabor_175_alt gabor_061_alt gabor_111     "1_70_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_129_175_061_111_target_position_2_3_retrieval_position_2"          gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_70_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  