# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_136 gabor_020 gabor_004 gabor_176    gabor_136_alt gabor_020 gabor_004 gabor_176_alt      "1_1_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_136_020_004_176_target_position_1_4_retrieval_position_1"          gabor_136_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_081 gabor_124 gabor_053 gabor_169    gabor_081_alt gabor_124_alt gabor_053 gabor_169      "1_2_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_081_124_053_169_target_position_1_2_retrieval_position_1"          gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_088 gabor_149 gabor_104 gabor_119    gabor_088_alt gabor_149 gabor_104_alt gabor_119      "1_3_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_088_149_104_119_target_position_1_3_retrieval_position_1"          gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_028 gabor_162 gabor_011 gabor_145    gabor_028_alt gabor_162 gabor_011_alt gabor_145      "1_4_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_028_162_011_145_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_056_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2092  2992  2292      fixation_cross    gabor_086 gabor_116 gabor_176 gabor_146    gabor_086_alt gabor_116 gabor_176_alt gabor_146      "1_5_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_086_116_176_146_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_010_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_083 gabor_120 gabor_038 gabor_057    gabor_083 gabor_120 gabor_038_alt gabor_057_alt      "1_6_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_083_120_038_057_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_057 gabor_003 gabor_082 gabor_166    gabor_057 gabor_003_alt gabor_082_alt gabor_166      "1_7_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_057_003_082_166_target_position_2_3_retrieval_position_2"          gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_014 gabor_034 gabor_096 gabor_166    gabor_014_alt gabor_034 gabor_096 gabor_166_alt      "1_8_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_014_034_096_166_target_position_1_4_retrieval_position_1"          gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2042  2992  2392      fixation_cross    gabor_046 gabor_002 gabor_018 gabor_123    gabor_046 gabor_002_alt gabor_018_alt gabor_123      "1_9_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2400_gabor_patch_orientation_046_002_018_123_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_003 gabor_156 gabor_085 gabor_028    gabor_003_alt gabor_156 gabor_085 gabor_028_alt     "1_10_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_003_156_085_028_target_position_1_4_retrieval_position_1"          gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_020 gabor_158 gabor_177 gabor_053    gabor_020_alt gabor_158_alt gabor_177 gabor_053     "1_11_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_020_158_177_053_target_position_1_2_retrieval_position_1"          gabor_020_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_125 gabor_180 gabor_090 gabor_066    gabor_125 gabor_180_alt gabor_090_alt gabor_066     "1_12_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_125_180_090_066_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_120 gabor_177 gabor_101 gabor_033    gabor_120 gabor_177_alt gabor_101_alt gabor_033     "1_13_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_120_177_101_033_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_025 gabor_154 gabor_047 gabor_136    gabor_025 gabor_154_alt gabor_047 gabor_136_alt     "1_14_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_025_154_047_136_target_position_2_4_retrieval_position_2"          gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_049 gabor_115 gabor_156 gabor_179    gabor_049_alt gabor_115 gabor_156 gabor_179_alt     "1_15_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_049_115_156_179_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2192  2992  2242      fixation_cross    gabor_044 gabor_008 gabor_095 gabor_119    gabor_044 gabor_008_alt gabor_095_alt gabor_119     "1_16_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2250_gabor_patch_orientation_044_008_095_119_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_169_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_177 gabor_106 gabor_088 gabor_053    gabor_177_alt gabor_106 gabor_088_alt gabor_053     "1_17_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_177_106_088_053_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_095 gabor_111 gabor_180 gabor_051    gabor_095 gabor_111_alt gabor_180 gabor_051_alt     "1_18_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_095_111_180_051_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_005 gabor_123 gabor_064 gabor_088    gabor_005 gabor_123_alt gabor_064 gabor_088_alt     "1_19_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_005_123_064_088_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_144 gabor_057 gabor_162 gabor_125    gabor_144 gabor_057_alt gabor_162 gabor_125_alt     "1_20_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_144_057_162_125_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_062 gabor_115 gabor_095 gabor_136    gabor_062 gabor_115 gabor_095_alt gabor_136_alt     "1_21_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_062_115_095_136_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_020 gabor_108 gabor_083 gabor_066    gabor_020_alt gabor_108_alt gabor_083 gabor_066     "1_22_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_020_108_083_066_target_position_1_2_retrieval_position_2"          gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2092  2992  2192      fixation_cross    gabor_053 gabor_089 gabor_019 gabor_126    gabor_053 gabor_089_alt gabor_019 gabor_126_alt     "1_23_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_053_089_019_126_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_019_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_019_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_058 gabor_096 gabor_167 gabor_006    gabor_058 gabor_096 gabor_167_alt gabor_006_alt     "1_24_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_058_096_167_006_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1992  2992  2142      fixation_cross    gabor_175 gabor_019 gabor_158 gabor_094    gabor_175 gabor_019_alt gabor_158_alt gabor_094     "1_25_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_175_019_158_094_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_094_framed    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_019 gabor_003 gabor_088 gabor_137    gabor_019_alt gabor_003_alt gabor_088 gabor_137     "1_26_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_019_003_088_137_target_position_1_2_retrieval_position_2"          gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_084 gabor_157 gabor_107 gabor_138    gabor_084 gabor_157 gabor_107_alt gabor_138_alt     "1_27_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_084_157_107_138_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_014 gabor_176 gabor_086 gabor_148    gabor_014 gabor_176 gabor_086_alt gabor_148_alt     "1_28_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_014_176_086_148_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_003 gabor_026 gabor_115 gabor_137    gabor_003_alt gabor_026_alt gabor_115 gabor_137     "1_29_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_003_026_115_137_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_066_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_066_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_063 gabor_168 gabor_153 gabor_090    gabor_063_alt gabor_168 gabor_153_alt gabor_090     "1_30_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_063_168_153_090_target_position_1_3_retrieval_position_1"          gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_013 gabor_045 gabor_168 gabor_120    gabor_013_alt gabor_045_alt gabor_168 gabor_120     "1_31_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_013_045_168_120_target_position_1_2_retrieval_position_1"          gabor_151_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_056 gabor_100 gabor_080 gabor_143    gabor_056 gabor_100 gabor_080_alt gabor_143_alt     "1_32_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_056_100_080_143_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  1992      fixation_cross    gabor_011 gabor_059 gabor_088 gabor_042    gabor_011 gabor_059_alt gabor_088 gabor_042_alt     "1_33_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_011_059_088_042_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_086 gabor_103 gabor_130 gabor_145    gabor_086_alt gabor_103 gabor_130_alt gabor_145     "1_34_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_086_103_130_145_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_107 gabor_136 gabor_065 gabor_002    gabor_107 gabor_136 gabor_065_alt gabor_002_alt     "1_35_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_107_136_065_002_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_019_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_169 gabor_140 gabor_002 gabor_091    gabor_169 gabor_140 gabor_002_alt gabor_091_alt     "1_36_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_169_140_002_091_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_116 gabor_095 gabor_061 gabor_150    gabor_116 gabor_095_alt gabor_061 gabor_150_alt     "1_37_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_116_095_061_150_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  2242      fixation_cross    gabor_102 gabor_163 gabor_146 gabor_028    gabor_102 gabor_163_alt gabor_146_alt gabor_028     "1_38_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2250_gabor_patch_orientation_102_163_146_028_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_078_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_163 gabor_002 gabor_145 gabor_056    gabor_163_alt gabor_002 gabor_145_alt gabor_056     "1_39_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_163_002_145_056_target_position_1_3_retrieval_position_1"          gabor_163_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1992  2992  2192      fixation_cross    gabor_109 gabor_039 gabor_093 gabor_077    gabor_109 gabor_039_alt gabor_093 gabor_077_alt     "1_40_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_109_039_093_077_target_position_2_4_retrieval_position_1"          gabor_109_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_109_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_001 gabor_164 gabor_140 gabor_117    gabor_001_alt gabor_164 gabor_140_alt gabor_117     "1_41_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_001_164_140_117_target_position_1_3_retrieval_position_1"          gabor_051_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_021 gabor_041 gabor_131 gabor_102    gabor_021 gabor_041_alt gabor_131_alt gabor_102     "1_42_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_021_041_131_102_target_position_2_3_retrieval_position_2"          gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_008 gabor_143 gabor_120 gabor_030    gabor_008 gabor_143_alt gabor_120_alt gabor_030     "1_43_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_008_143_120_030_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_111 gabor_131 gabor_057 gabor_162    gabor_111 gabor_131_alt gabor_057 gabor_162_alt     "1_44_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_111_131_057_162_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  1942      fixation_cross    gabor_162 gabor_074 gabor_092 gabor_051    gabor_162 gabor_074 gabor_092_alt gabor_051_alt     "1_45_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_162_074_092_051_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_092_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1792  2992  2092      fixation_cross    gabor_144 gabor_054 gabor_031 gabor_171    gabor_144 gabor_054_alt gabor_031 gabor_171_alt     "1_46_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_144_054_031_171_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_081_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_027 gabor_094 gabor_175 gabor_066    gabor_027 gabor_094 gabor_175_alt gabor_066_alt     "1_47_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_027_094_175_066_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_120 gabor_147 gabor_059 gabor_089    gabor_120 gabor_147 gabor_059_alt gabor_089_alt     "1_48_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_120_147_059_089_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_059_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_143 gabor_161 gabor_114 gabor_073    gabor_143 gabor_161_alt gabor_114 gabor_073_alt     "1_49_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_143_161_114_073_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_027_framed    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_161 gabor_097 gabor_039 gabor_015    gabor_161 gabor_097 gabor_039_alt gabor_015_alt     "1_50_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_161_097_039_015_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_111 gabor_039 gabor_071 gabor_006    gabor_111_alt gabor_039 gabor_071_alt gabor_006     "1_51_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_111_039_071_006_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_071_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_012 gabor_069 gabor_137 gabor_178    gabor_012 gabor_069 gabor_137_alt gabor_178_alt     "1_52_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_012_069_137_178_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_137_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2142  2992  1942      fixation_cross    gabor_119 gabor_040 gabor_074 gabor_009    gabor_119_alt gabor_040 gabor_074_alt gabor_009     "1_53_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_119_040_074_009_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_009_framed    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_009_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_109 gabor_074 gabor_003 gabor_027    gabor_109_alt gabor_074 gabor_003_alt gabor_027     "1_54_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_109_074_003_027_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_139 gabor_155 gabor_068 gabor_049    gabor_139_alt gabor_155_alt gabor_068 gabor_049     "1_55_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_139_155_068_049_target_position_1_2_retrieval_position_1"          gabor_139_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_033 gabor_065 gabor_004 gabor_139    gabor_033 gabor_065_alt gabor_004 gabor_139_alt     "1_56_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_033_065_004_139_target_position_2_4_retrieval_position_2"          gabor_circ gabor_110_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_004 gabor_075 gabor_048 gabor_155    gabor_004 gabor_075 gabor_048_alt gabor_155_alt     "1_57_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_004_075_048_155_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_048_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_077 gabor_096 gabor_062 gabor_020    gabor_077_alt gabor_096 gabor_062 gabor_020_alt     "1_58_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_077_096_062_020_target_position_1_4_retrieval_position_2"          gabor_circ gabor_142_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_142_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_170 gabor_146 gabor_088 gabor_109    gabor_170 gabor_146_alt gabor_088_alt gabor_109     "1_59_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_170_146_088_109_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_050 gabor_178 gabor_112 gabor_088    gabor_050 gabor_178_alt gabor_112 gabor_088_alt     "1_60_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_050_178_112_088_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_173 gabor_021 gabor_096 gabor_051    gabor_173_alt gabor_021_alt gabor_096 gabor_051     "1_61_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_173_021_096_051_target_position_1_2_retrieval_position_2"          gabor_circ gabor_157_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_147 gabor_009 gabor_098 gabor_070    gabor_147 gabor_009 gabor_098_alt gabor_070_alt     "1_62_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_147_009_098_070_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2092  2992  2592      fixation_cross    gabor_114 gabor_074 gabor_130 gabor_041    gabor_114_alt gabor_074 gabor_130_alt gabor_041     "1_63_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2600_gabor_patch_orientation_114_074_130_041_target_position_1_3_retrieval_position_2"          gabor_circ gabor_074_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_074_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_178 gabor_052 gabor_139 gabor_111    gabor_178 gabor_052_alt gabor_139_alt gabor_111     "1_64_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_178_052_139_111_target_position_2_3_retrieval_position_2"          gabor_circ gabor_004_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_116 gabor_059 gabor_144 gabor_179    gabor_116 gabor_059 gabor_144_alt gabor_179_alt     "1_65_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_116_059_144_179_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_086 gabor_066 gabor_150 gabor_020    gabor_086_alt gabor_066 gabor_150 gabor_020_alt     "1_66_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_086_066_150_020_target_position_1_4_retrieval_position_1"          gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_116 gabor_081 gabor_141 gabor_065    gabor_116 gabor_081_alt gabor_141_alt gabor_065     "1_67_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_116_081_141_065_target_position_2_3_retrieval_position_2"          gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1742  2992  2492      fixation_cross    gabor_130 gabor_101 gabor_147 gabor_169    gabor_130 gabor_101 gabor_147_alt gabor_169_alt     "1_68_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_130_101_147_169_target_position_3_4_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_064 gabor_039 gabor_091 gabor_153    gabor_064_alt gabor_039 gabor_091 gabor_153_alt     "1_69_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_064_039_091_153_target_position_1_4_retrieval_position_1"          gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_077 gabor_002 gabor_160 gabor_032    gabor_077_alt gabor_002 gabor_160 gabor_032_alt     "1_70_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_077_002_160_032_target_position_1_4_retrieval_position_2"          gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_002_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 