# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_149 gabor_102 gabor_043 gabor_176    gabor_149_alt gabor_102_alt gabor_043 gabor_176      "2_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_149_102_043_176_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_178 gabor_132 gabor_147 gabor_020    gabor_178_alt gabor_132 gabor_147_alt gabor_020      "2_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_178_132_147_020_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_005 gabor_058 gabor_177 gabor_111    gabor_005_alt gabor_058_alt gabor_177 gabor_111      "2_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_005_058_177_111_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_177_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_065 gabor_172 gabor_038 gabor_102    gabor_065 gabor_172_alt gabor_038 gabor_102_alt      "2_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_065_172_038_102_target_position_1_3_retrieval_position_1"       gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_149 gabor_174 gabor_043 gabor_061    gabor_149_alt gabor_174 gabor_043 gabor_061_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_149_174_043_061_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2142      fixation_cross    gabor_096 gabor_111 gabor_151 gabor_076    gabor_096 gabor_111_alt gabor_151 gabor_076_alt      "2_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_096_111_151_076_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_target_position_1_3     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_028_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_096 gabor_157 gabor_078 gabor_127    gabor_096 gabor_157_alt gabor_078 gabor_127_alt      "2_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_096_157_078_127_target_position_1_3_retrieval_position_1"       gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_056 gabor_100 gabor_165 gabor_079    gabor_056_alt gabor_100_alt gabor_165 gabor_079      "2_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_056_100_165_079_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_059 gabor_143 gabor_032 gabor_115    gabor_059_alt gabor_143 gabor_032_alt gabor_115      "2_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_059_143_032_115_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_115_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  1892      fixation_cross    gabor_169 gabor_050 gabor_113 gabor_005    gabor_169 gabor_050_alt gabor_113 gabor_005_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_169_050_113_005_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_140_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_101 gabor_037 gabor_070 gabor_142    gabor_101_alt gabor_037 gabor_070 gabor_142_alt     "2_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_101_037_070_142_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_113 gabor_047 gabor_179 gabor_089    gabor_113 gabor_047 gabor_179_alt gabor_089_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_113_047_179_089_target_position_1_2_retrieval_position_1"       gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_125 gabor_108 gabor_153 gabor_091    gabor_125_alt gabor_108 gabor_153_alt gabor_091     "2_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_125_108_153_091_target_position_2_4_retrieval_position_2"       gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_125 gabor_099 gabor_084 gabor_166    gabor_125_alt gabor_099 gabor_084_alt gabor_166     "2_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_125_099_084_166_target_position_2_4_retrieval_position_2"       gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_072 gabor_087 gabor_028 gabor_156    gabor_072_alt gabor_087 gabor_028 gabor_156_alt     "2_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_072_087_028_156_target_position_2_3_retrieval_position_2"       gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_080 gabor_006 gabor_038 gabor_113    gabor_080_alt gabor_006 gabor_038_alt gabor_113     "2_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_080_006_038_113_target_position_2_4_retrieval_position_2"       gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_144 gabor_112 gabor_054 gabor_034    gabor_144_alt gabor_112 gabor_054_alt gabor_034     "2_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_144_112_054_034_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_004_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_120 gabor_179 gabor_013 gabor_071    gabor_120_alt gabor_179_alt gabor_013 gabor_071     "2_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_120_179_013_071_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_113 gabor_042 gabor_085 gabor_025    gabor_113 gabor_042 gabor_085_alt gabor_025_alt     "2_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_113_042_085_025_target_position_1_2_retrieval_position_1"       gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_121 gabor_085 gabor_061 gabor_001    gabor_121 gabor_085_alt gabor_061 gabor_001_alt     "2_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_121_085_061_001_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_051 gabor_019 gabor_081 gabor_108    gabor_051 gabor_019_alt gabor_081_alt gabor_108     "2_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_051_019_081_108_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_158_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_158 gabor_053 gabor_022 gabor_038    gabor_158 gabor_053 gabor_022_alt gabor_038_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_158_053_022_038_target_position_1_2_retrieval_position_2"       gabor_circ gabor_053_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_061 gabor_140 gabor_125 gabor_170    gabor_061 gabor_140_alt gabor_125 gabor_170_alt     "2_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_061_140_125_170_target_position_1_3_retrieval_position_1"       gabor_013_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_078 gabor_122 gabor_152 gabor_010    gabor_078 gabor_122_alt gabor_152_alt gabor_010     "2_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_078_122_152_010_target_position_1_4_retrieval_position_1"       gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_086 gabor_065 gabor_175 gabor_123    gabor_086_alt gabor_065_alt gabor_175 gabor_123     "2_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_086_065_175_123_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_082 gabor_013 gabor_065 gabor_032    gabor_082 gabor_013_alt gabor_065_alt gabor_032     "2_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_082_013_065_032_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_032_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  2492      fixation_cross    gabor_120 gabor_138 gabor_064 gabor_030    gabor_120_alt gabor_138 gabor_064 gabor_030_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2500_gabor_patch_orientation_120_138_064_030_target_position_2_3_retrieval_position_1"       gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_002 gabor_125 gabor_047 gabor_178    gabor_002_alt gabor_125_alt gabor_047 gabor_178     "2_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_002_125_047_178_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_153 gabor_094 gabor_070 gabor_179    gabor_153_alt gabor_094_alt gabor_070 gabor_179     "2_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_153_094_070_179_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_178 gabor_002 gabor_119 gabor_043    gabor_178 gabor_002_alt gabor_119 gabor_043_alt     "2_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_178_002_119_043_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_071_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_058 gabor_013 gabor_092 gabor_028    gabor_058 gabor_013_alt gabor_092 gabor_028_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_058_013_092_028_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_006 gabor_115 gabor_091 gabor_143    gabor_006 gabor_115 gabor_091_alt gabor_143_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_006_115_091_143_target_position_1_2_retrieval_position_2"       gabor_circ gabor_115_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2342      fixation_cross    gabor_091 gabor_011 gabor_179 gabor_058    gabor_091 gabor_011_alt gabor_179 gabor_058_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2350_gabor_patch_orientation_091_011_179_058_target_position_1_3_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_011_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_015 gabor_140 gabor_098 gabor_083    gabor_015 gabor_140 gabor_098_alt gabor_083_alt     "2_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_015_140_098_083_target_position_1_2_retrieval_position_1"       gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_007 gabor_042 gabor_114 gabor_092    gabor_007 gabor_042_alt gabor_114 gabor_092_alt     "2_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_007_042_114_092_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_114_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_088 gabor_170 gabor_065 gabor_049    gabor_088 gabor_170_alt gabor_065_alt gabor_049     "2_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_088_170_065_049_target_position_1_4_retrieval_position_1"       gabor_136_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_011 gabor_095 gabor_053 gabor_175    gabor_011 gabor_095_alt gabor_053_alt gabor_175     "2_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_011_095_053_175_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_126_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  1992      fixation_cross    gabor_015 gabor_069 gabor_140 gabor_095    gabor_015 gabor_069 gabor_140_alt gabor_095_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2000_gabor_patch_orientation_015_069_140_095_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_158 gabor_053 gabor_093 gabor_030    gabor_158 gabor_053_alt gabor_093 gabor_030_alt     "2_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_158_053_093_030_target_position_1_3_retrieval_position_1"       gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_174 gabor_115 gabor_032 gabor_004    gabor_174_alt gabor_115_alt gabor_032 gabor_004     "2_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_174_115_032_004_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_036 gabor_158 gabor_083 gabor_068    gabor_036_alt gabor_158 gabor_083_alt gabor_068     "2_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_036_158_083_068_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_170 gabor_029 gabor_053 gabor_134    gabor_170 gabor_029_alt gabor_053 gabor_134_alt     "2_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_170_029_053_134_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2442      fixation_cross    gabor_090 gabor_166 gabor_150 gabor_026    gabor_090_alt gabor_166_alt gabor_150 gabor_026     "2_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_090_166_150_026_target_position_3_4_retrieval_position_1"       gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_090_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_006 gabor_160 gabor_024 gabor_137    gabor_006 gabor_160 gabor_024_alt gabor_137_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_006_160_024_137_target_position_1_2_retrieval_position_1"       gabor_053_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_005 gabor_074 gabor_142 gabor_159    gabor_005 gabor_074 gabor_142_alt gabor_159_alt     "2_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_005_074_142_159_target_position_1_2_retrieval_position_1"       gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_178 gabor_092 gabor_118 gabor_163    gabor_178_alt gabor_092 gabor_118_alt gabor_163     "2_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_178_092_118_163_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_104 gabor_149 gabor_173 gabor_037    gabor_104_alt gabor_149 gabor_173_alt gabor_037     "2_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_104_149_173_037_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2042  2992  2342      fixation_cross    gabor_159 gabor_006 gabor_044 gabor_025    gabor_159_alt gabor_006 gabor_044 gabor_025_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_159_006_044_025_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_164 gabor_148 gabor_043 gabor_078    gabor_164_alt gabor_148 gabor_043_alt gabor_078     "2_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_164_148_043_078_target_position_2_4_retrieval_position_2"       gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_071 gabor_005 gabor_124 gabor_091    gabor_071 gabor_005 gabor_124_alt gabor_091_alt     "2_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_071_005_124_091_target_position_1_2_retrieval_position_2"       gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_006 gabor_077 gabor_165 gabor_144    gabor_006_alt gabor_077 gabor_165 gabor_144_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_006_077_165_144_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_028_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_122 gabor_014 gabor_032 gabor_161    gabor_122 gabor_014_alt gabor_032_alt gabor_161     "2_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_122_014_032_161_target_position_1_4_retrieval_position_1"       gabor_122_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  2442      fixation_cross    gabor_032 gabor_060 gabor_171 gabor_096    gabor_032_alt gabor_060 gabor_171_alt gabor_096     "2_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2450_gabor_patch_orientation_032_060_171_096_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_121_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_010 gabor_069 gabor_128 gabor_174    gabor_010_alt gabor_069 gabor_128_alt gabor_174     "2_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_010_069_128_174_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_174_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_034 gabor_140 gabor_155 gabor_069    gabor_034 gabor_140_alt gabor_155 gabor_069_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_034_140_155_069_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_069_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_069_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_164 gabor_046 gabor_135 gabor_001    gabor_164_alt gabor_046 gabor_135 gabor_001_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_164_046_135_001_target_position_2_3_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_160 gabor_104 gabor_178 gabor_026    gabor_160 gabor_104 gabor_178_alt gabor_026_alt     "2_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_160_104_178_026_target_position_1_2_retrieval_position_2"       gabor_circ gabor_054_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_069 gabor_041 gabor_157 gabor_003    gabor_069_alt gabor_041_alt gabor_157 gabor_003     "2_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_069_041_157_003_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_101 gabor_048 gabor_031 gabor_167    gabor_101_alt gabor_048 gabor_031 gabor_167_alt     "2_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_101_048_031_167_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_031_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2292      fixation_cross    gabor_060 gabor_031 gabor_010 gabor_175    gabor_060 gabor_031_alt gabor_010_alt gabor_175     "2_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_060_031_010_175_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_010_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_066 gabor_175 gabor_092 gabor_022    gabor_066_alt gabor_175 gabor_092 gabor_022_alt     "2_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_066_175_092_022_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_092_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_031 gabor_108 gabor_048 gabor_089    gabor_031 gabor_108_alt gabor_048_alt gabor_089     "2_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_031_108_048_089_target_position_1_4_retrieval_position_1"       gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_003 gabor_020 gabor_089 gabor_126    gabor_003 gabor_020_alt gabor_089_alt gabor_126     "2_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_003_020_089_126_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_174_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_025 gabor_140 gabor_083 gabor_068    gabor_025_alt gabor_140 gabor_083 gabor_068_alt     "2_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_025_140_083_068_target_position_2_3_retrieval_position_2"       gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_005 gabor_155 gabor_045 gabor_086    gabor_005 gabor_155_alt gabor_045_alt gabor_086     "2_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_005_155_045_086_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2392      fixation_cross    gabor_179 gabor_139 gabor_120 gabor_052    gabor_179 gabor_139_alt gabor_120_alt gabor_052     "2_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2400_gabor_patch_orientation_179_139_120_052_target_position_1_4_retrieval_position_2"       gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_003_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_117 gabor_156 gabor_135 gabor_093    gabor_117_alt gabor_156 gabor_135_alt gabor_093     "2_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_117_156_135_093_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_104 gabor_038 gabor_160 gabor_075    gabor_104_alt gabor_038_alt gabor_160 gabor_075     "2_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_104_038_160_075_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  1992      fixation_cross    gabor_066 gabor_012 gabor_091 gabor_027    gabor_066 gabor_012_alt gabor_091_alt gabor_027     "2_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2000_gabor_patch_orientation_066_012_091_027_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_114 gabor_157 gabor_174 gabor_007    gabor_114 gabor_157_alt gabor_174 gabor_007_alt     "2_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_114_157_174_007_target_position_1_3_retrieval_position_1"       gabor_114_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  