# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_141 gabor_078 gabor_030 gabor_162    gabor_141 gabor_078_alt gabor_030_alt gabor_162      "2_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_141_078_030_162_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_114_framed    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_080 gabor_111 gabor_167 gabor_001    gabor_080_alt gabor_111_alt gabor_167 gabor_001      "2_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_080_111_167_001_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_046_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_044 gabor_003 gabor_068 gabor_178    gabor_044_alt gabor_003_alt gabor_068 gabor_178      "2_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_044_003_068_178_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_132_framed    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_039 gabor_125 gabor_178 gabor_009    gabor_039 gabor_125_alt gabor_178_alt gabor_009      "2_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_039_125_178_009_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_059_framed    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_026 gabor_179 gabor_091 gabor_003    gabor_026_alt gabor_179_alt gabor_091 gabor_003      "2_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_026_179_091_003_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_111 gabor_032 gabor_088 gabor_001    gabor_111 gabor_032_alt gabor_088_alt gabor_001      "2_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_111_032_088_001_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1992  2992  2442      fixation_cross    gabor_021 gabor_103 gabor_072 gabor_134    gabor_021 gabor_103 gabor_072_alt gabor_134_alt      "2_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2450_gabor_patch_orientation_021_103_072_134_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_134_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_083 gabor_042 gabor_008 gabor_067    gabor_083_alt gabor_042_alt gabor_008 gabor_067      "2_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_083_042_008_067_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_142 gabor_026 gabor_085 gabor_054    gabor_142 gabor_026 gabor_085_alt gabor_054_alt      "2_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_142_026_085_054_target_position_1_2_retrieval_position_2"       gabor_circ gabor_026_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_081 gabor_011 gabor_056 gabor_031    gabor_081_alt gabor_011 gabor_056 gabor_031_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_081_011_056_031_target_position_2_3_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_107 gabor_025 gabor_157 gabor_140    gabor_107_alt gabor_025_alt gabor_157 gabor_140     "2_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_107_025_157_140_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_125 gabor_004 gabor_068 gabor_036    gabor_125 gabor_004 gabor_068_alt gabor_036_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_125_004_068_036_target_position_1_2_retrieval_position_1"       gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2042  2992  2342      fixation_cross    gabor_048 gabor_024 gabor_159 gabor_079    gabor_048 gabor_024 gabor_159_alt gabor_079_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_048_024_159_079_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_159_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_159_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_076 gabor_148 gabor_012 gabor_117    gabor_076_alt gabor_148 gabor_012_alt gabor_117     "2_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_076_148_012_117_target_position_2_4_retrieval_position_2"       gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_089 gabor_139 gabor_013 gabor_169    gabor_089_alt gabor_139 gabor_013_alt gabor_169     "2_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_089_139_013_169_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2192  2992  2242      fixation_cross    gabor_076 gabor_043 gabor_010 gabor_119    gabor_076_alt gabor_043 gabor_010_alt gabor_119     "2_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2250_gabor_patch_orientation_076_043_010_119_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_150_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_124 gabor_018 gabor_036 gabor_105    gabor_124_alt gabor_018 gabor_036_alt gabor_105     "2_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_124_018_036_105_target_position_2_4_retrieval_position_2"       gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_118 gabor_135 gabor_168 gabor_005    gabor_118 gabor_135 gabor_168_alt gabor_005_alt     "2_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_118_135_168_005_target_position_1_2_retrieval_position_2"       gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_126 gabor_157 gabor_179 gabor_102    gabor_126 gabor_157_alt gabor_179 gabor_102_alt     "2_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_126_157_179_102_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  1942      fixation_cross    gabor_028 gabor_117 gabor_162 gabor_179    gabor_028_alt gabor_117_alt gabor_162 gabor_179     "2_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_028_117_162_179_target_position_3_4_retrieval_position_1"       gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_028_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2442      fixation_cross    gabor_145 gabor_119 gabor_179 gabor_055    gabor_145 gabor_119_alt gabor_179 gabor_055_alt     "2_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_145_119_179_055_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_154 gabor_130 gabor_014 gabor_098    gabor_154_alt gabor_130 gabor_014_alt gabor_098     "2_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_154_130_014_098_target_position_2_4_retrieval_position_2"       gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_061 gabor_131 gabor_166 gabor_084    gabor_061 gabor_131_alt gabor_166_alt gabor_084     "2_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_061_131_166_084_target_position_1_4_retrieval_position_1"       gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_066 gabor_046 gabor_001 gabor_172    gabor_066 gabor_046 gabor_001_alt gabor_172_alt     "2_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_066_046_001_172_target_position_1_2_retrieval_position_1"       gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_145 gabor_165 gabor_040 gabor_086    gabor_145_alt gabor_165 gabor_040 gabor_086_alt     "2_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_145_165_040_086_target_position_2_3_retrieval_position_2"       gabor_circ gabor_165_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  1942      fixation_cross    gabor_059 gabor_003 gabor_169 gabor_124    gabor_059_alt gabor_003 gabor_169_alt gabor_124     "2_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_1950_gabor_patch_orientation_059_003_169_124_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_144 gabor_166 gabor_030 gabor_091    gabor_144_alt gabor_166 gabor_030 gabor_091_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_144_166_030_091_target_position_2_3_retrieval_position_2"       gabor_circ gabor_166_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_046 gabor_025 gabor_007 gabor_175    gabor_046 gabor_025_alt gabor_007_alt gabor_175     "2_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_046_025_007_175_target_position_1_4_retrieval_position_1"       gabor_094_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_095 gabor_113 gabor_033 gabor_158    gabor_095 gabor_113_alt gabor_033_alt gabor_158     "2_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_095_113_033_158_target_position_1_4_retrieval_position_1"       gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_121 gabor_170 gabor_056 gabor_038    gabor_121 gabor_170_alt gabor_056_alt gabor_038     "2_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_121_170_056_038_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1742  2992  2242      fixation_cross    gabor_013 gabor_119 gabor_180 gabor_093    gabor_013_alt gabor_119 gabor_180 gabor_093_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2250_gabor_patch_orientation_013_119_180_093_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_093_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_010 gabor_067 gabor_148 gabor_028    gabor_010_alt gabor_067 gabor_148 gabor_028_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_010_067_148_028_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_131 gabor_099 gabor_162 gabor_083    gabor_131_alt gabor_099 gabor_162_alt gabor_083     "2_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_131_099_162_083_target_position_2_4_retrieval_position_2"       gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_081 gabor_124 gabor_064 gabor_015    gabor_081 gabor_124_alt gabor_064 gabor_015_alt     "2_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_081_124_064_015_target_position_1_3_retrieval_position_1"       gabor_035_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_049 gabor_074 gabor_001 gabor_116    gabor_049_alt gabor_074 gabor_001_alt gabor_116     "2_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_049_074_001_116_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_116_framed    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_089 gabor_141 gabor_054 gabor_159    gabor_089_alt gabor_141_alt gabor_054 gabor_159     "2_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_089_141_054_159_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_028 gabor_163 gabor_091 gabor_144    gabor_028_alt gabor_163 gabor_091_alt gabor_144     "2_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_028_163_091_144_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_170 gabor_089 gabor_026 gabor_145    gabor_170_alt gabor_089 gabor_026 gabor_145_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_170_089_026_145_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_005_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_079 gabor_131 gabor_106 gabor_061    gabor_079 gabor_131_alt gabor_106 gabor_061_alt     "2_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_079_131_106_061_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_106_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_067 gabor_024 gabor_041 gabor_148    gabor_067_alt gabor_024_alt gabor_041 gabor_148     "2_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_067_024_041_148_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_032 gabor_140 gabor_108 gabor_160    gabor_032_alt gabor_140 gabor_108 gabor_160_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_032_140_108_160_target_position_2_3_retrieval_position_2"       gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_154 gabor_047 gabor_124 gabor_178    gabor_154 gabor_047 gabor_124_alt gabor_178_alt     "2_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_154_047_124_178_target_position_1_2_retrieval_position_2"       gabor_circ gabor_047_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2142  2992  2192      fixation_cross    gabor_017 gabor_126 gabor_037 gabor_171    gabor_017 gabor_126_alt gabor_037_alt gabor_171     "2_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_017_126_037_171_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_073 gabor_093 gabor_149 gabor_017    gabor_073 gabor_093_alt gabor_149_alt gabor_017     "2_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_073_093_149_017_target_position_1_4_retrieval_position_1"       gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_084 gabor_001 gabor_161 gabor_118    gabor_084_alt gabor_001 gabor_161 gabor_118_alt     "2_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_084_001_161_118_target_position_2_3_retrieval_position_1"       gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_037_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_175 gabor_141 gabor_067 gabor_112    gabor_175_alt gabor_141_alt gabor_067 gabor_112     "2_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_175_141_067_112_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_149 gabor_080 gabor_015 gabor_121    gabor_149_alt gabor_080 gabor_015 gabor_121_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_149_080_015_121_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_165 gabor_094 gabor_127 gabor_180    gabor_165_alt gabor_094 gabor_127_alt gabor_180     "2_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_165_094_127_180_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1842  2992  2042      fixation_cross    gabor_064 gabor_176 gabor_122 gabor_154    gabor_064 gabor_176 gabor_122_alt gabor_154_alt     "2_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_064_176_122_154_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_154_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_142 gabor_057 gabor_179 gabor_037    gabor_142 gabor_057 gabor_179_alt gabor_037_alt     "2_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_142_057_179_037_target_position_1_2_retrieval_position_1"       gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_073 gabor_056 gabor_030 gabor_011    gabor_073 gabor_056 gabor_030_alt gabor_011_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_073_056_030_011_target_position_1_2_retrieval_position_2"       gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_080 gabor_169 gabor_138 gabor_108    gabor_080_alt gabor_169 gabor_138_alt gabor_108     "2_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_080_169_138_108_target_position_2_4_retrieval_position_2"       gabor_circ gabor_031_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_013 gabor_103 gabor_119 gabor_079    gabor_013_alt gabor_103_alt gabor_119 gabor_079     "2_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_013_103_119_079_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_079_framed    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1742  2992  2142      fixation_cross    gabor_154 gabor_044 gabor_084 gabor_027    gabor_154 gabor_044 gabor_084_alt gabor_027_alt     "2_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2150_gabor_patch_orientation_154_044_084_027_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_027 gabor_073 gabor_153 gabor_044    gabor_027 gabor_073_alt gabor_153 gabor_044_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_027_073_153_044_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_106_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_085 gabor_028 gabor_062 gabor_137    gabor_085_alt gabor_028 gabor_062 gabor_137_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_085_028_062_137_target_position_2_3_retrieval_position_2"       gabor_circ gabor_168_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_053 gabor_110 gabor_178 gabor_001    gabor_053_alt gabor_110 gabor_178 gabor_001_alt     "2_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_053_110_178_001_target_position_2_3_retrieval_position_2"       gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_148 gabor_042 gabor_091 gabor_072    gabor_148_alt gabor_042 gabor_091_alt gabor_072     "2_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_148_042_091_072_target_position_2_4_retrieval_position_2"       gabor_circ gabor_042_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_050 gabor_100 gabor_016 gabor_167    gabor_050_alt gabor_100 gabor_016_alt gabor_167     "2_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_050_100_016_167_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_032_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_039 gabor_008 gabor_179 gabor_122    gabor_039_alt gabor_008 gabor_179 gabor_122_alt     "2_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_039_008_179_122_target_position_2_3_retrieval_position_2"       gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  2492      fixation_cross    gabor_003 gabor_166 gabor_080 gabor_112    gabor_003 gabor_166_alt gabor_080_alt gabor_112     "2_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_003_166_080_112_target_position_1_4_retrieval_position_2"       gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_029_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_079 gabor_105 gabor_064 gabor_147    gabor_079 gabor_105_alt gabor_064 gabor_147_alt     "2_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_079_105_064_147_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_124 gabor_154 gabor_072 gabor_180    gabor_124 gabor_154_alt gabor_072_alt gabor_180     "2_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_124_154_072_180_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_089 gabor_145 gabor_067 gabor_123    gabor_089 gabor_145 gabor_067_alt gabor_123_alt     "2_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_089_145_067_123_target_position_1_2_retrieval_position_2"       gabor_circ gabor_145_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_040 gabor_086 gabor_146 gabor_124    gabor_040_alt gabor_086_alt gabor_146 gabor_124     "2_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_040_086_146_124_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_095 gabor_113 gabor_159 gabor_073    gabor_095 gabor_113_alt gabor_159 gabor_073_alt     "2_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_095_113_159_073_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_083 gabor_005 gabor_021 gabor_159    gabor_083 gabor_005_alt gabor_021_alt gabor_159     "2_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_083_005_021_159_target_position_1_4_retrieval_position_1"       gabor_083_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  2592      fixation_cross    gabor_140 gabor_052 gabor_096 gabor_081    gabor_140 gabor_052_alt gabor_096 gabor_081_alt     "2_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2600_gabor_patch_orientation_140_052_096_081_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_077 gabor_114 gabor_005 gabor_043    gabor_077_alt gabor_114_alt gabor_005 gabor_043     "2_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_077_114_005_043_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  2542      fixation_cross    gabor_147 gabor_070 gabor_085 gabor_023    gabor_147_alt gabor_070 gabor_085_alt gabor_023     "2_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2550_gabor_patch_orientation_147_070_085_023_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  