# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_109 gabor_088 gabor_146 gabor_023    gabor_109 gabor_088_alt gabor_146 gabor_023_alt      "2_1_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_109_088_146_023_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_023_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_1_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_080 gabor_024 gabor_143 gabor_055    gabor_080 gabor_024 gabor_143_alt gabor_055_alt      "2_2_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_080_024_143_055_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_017 gabor_045 gabor_074 gabor_105    gabor_017 gabor_045_alt gabor_074_alt gabor_105      "2_3_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_017_045_074_105_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_3_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_139 gabor_022 gabor_005 gabor_073    gabor_139_alt gabor_022_alt gabor_005 gabor_073      "2_4_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_139_022_005_073_target_position_1_2_retrieval_position_2"          gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_4_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  2392      fixation_cross    gabor_156 gabor_110 gabor_090 gabor_174    gabor_156 gabor_110_alt gabor_090_alt gabor_174      "2_5_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2400_gabor_patch_orientation_156_110_090_174_target_position_2_3_retrieval_position_1"          gabor_156_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_5_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_156_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_135 gabor_075 gabor_180 gabor_092    gabor_135_alt gabor_075 gabor_180 gabor_092_alt      "2_6_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_135_075_180_092_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_046_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_6_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_084 gabor_136 gabor_166 gabor_028    gabor_084_alt gabor_136 gabor_166_alt gabor_028      "2_7_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_084_136_166_028_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_7_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_114 gabor_146 gabor_033 gabor_009    gabor_114 gabor_146_alt gabor_033 gabor_009_alt      "2_8_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_114_146_033_009_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_058_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_8_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1842  2992  2492      fixation_cross    gabor_083 gabor_014 gabor_166 gabor_053    gabor_083_alt gabor_014 gabor_166_alt gabor_053      "2_9_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_083_014_166_053_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_target_position_1_3     "2_9_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_129 gabor_162 gabor_085 gabor_047    gabor_129 gabor_162_alt gabor_085_alt gabor_047     "2_10_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_129_162_085_047_target_position_2_3_retrieval_position_2"          gabor_circ gabor_162_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_10_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_085 gabor_069 gabor_129 gabor_148    gabor_085 gabor_069 gabor_129_alt gabor_148_alt     "2_11_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_085_069_129_148_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_11_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_151 gabor_100 gabor_133 gabor_062    gabor_151_alt gabor_100 gabor_133 gabor_062_alt     "2_12_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_151_100_133_062_target_position_1_4_retrieval_position_1"          gabor_014_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_12_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_036 gabor_147 gabor_175 gabor_108    gabor_036_alt gabor_147 gabor_175_alt gabor_108     "2_13_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_036_147_175_108_target_position_1_3_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_13_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_148 gabor_060 gabor_127 gabor_166    gabor_148 gabor_060_alt gabor_127 gabor_166_alt     "2_14_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_148_060_127_166_target_position_2_4_retrieval_position_2"          gabor_circ gabor_060_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_14_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_063 gabor_031 gabor_096 gabor_147    gabor_063 gabor_031_alt gabor_096 gabor_147_alt     "2_15_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_063_031_096_147_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_147_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_15_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_113 gabor_004 gabor_093 gabor_071    gabor_113_alt gabor_004_alt gabor_093 gabor_071     "2_16_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_113_004_093_071_target_position_1_2_retrieval_position_2"          gabor_circ gabor_053_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2042      fixation_cross    gabor_081 gabor_158 gabor_035 gabor_102    gabor_081 gabor_158_alt gabor_035_alt gabor_102     "2_17_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_081_158_035_102_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_052_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_17_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_175 gabor_040 gabor_066 gabor_085    gabor_175_alt gabor_040 gabor_066 gabor_085_alt     "2_18_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_175_040_066_085_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_18_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_084 gabor_045 gabor_128 gabor_061    gabor_084_alt gabor_045 gabor_128_alt gabor_061     "2_19_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_084_045_128_061_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_19_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_164 gabor_013 gabor_032 gabor_118    gabor_164 gabor_013 gabor_032_alt gabor_118_alt     "2_20_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_164_013_032_118_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_20_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_141 gabor_081 gabor_036 gabor_118    gabor_141_alt gabor_081 gabor_036 gabor_118_alt     "2_21_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_141_081_036_118_target_position_1_4_retrieval_position_1"          gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_21_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1842  2992  2542      fixation_cross    gabor_093 gabor_178 gabor_050 gabor_023    gabor_093 gabor_178 gabor_050_alt gabor_023_alt     "2_22_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2550_gabor_patch_orientation_093_178_050_023_target_position_3_4_retrieval_position_1"          gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_22_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_043 gabor_071 gabor_179 gabor_152    gabor_043_alt gabor_071_alt gabor_179 gabor_152     "2_23_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_043_071_179_152_target_position_1_2_retrieval_position_1"          gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_23_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_017 gabor_033 gabor_092 gabor_123    gabor_017 gabor_033_alt gabor_092 gabor_123_alt     "2_24_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_017_033_092_123_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_076_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1942  2992  2442      fixation_cross    gabor_119 gabor_031 gabor_145 gabor_014    gabor_119_alt gabor_031 gabor_145_alt gabor_014     "2_25_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_119_031_145_014_target_position_1_3_retrieval_position_2"          gabor_circ gabor_031_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_25_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_031_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_006 gabor_170 gabor_114 gabor_142    gabor_006_alt gabor_170 gabor_114 gabor_142_alt     "2_26_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_006_170_114_142_target_position_1_4_retrieval_position_1"          gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_26_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_114 gabor_154 gabor_176 gabor_098    gabor_114 gabor_154 gabor_176_alt gabor_098_alt     "2_27_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_114_154_176_098_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_010 gabor_180 gabor_067 gabor_050    gabor_010_alt gabor_180 gabor_067 gabor_050_alt     "2_28_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_010_180_067_050_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_28_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_091 gabor_062 gabor_003 gabor_025    gabor_091 gabor_062_alt gabor_003_alt gabor_025     "2_29_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_091_062_003_025_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_142_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_29_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_053 gabor_161 gabor_142 gabor_087    gabor_053_alt gabor_161 gabor_142_alt gabor_087     "2_30_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_053_161_142_087_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_006_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_028 gabor_045 gabor_096 gabor_167    gabor_028 gabor_045 gabor_096_alt gabor_167_alt     "2_31_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_028_045_096_167_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_31_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2042  2992  2342      fixation_cross    gabor_166 gabor_059 gabor_100 gabor_121    gabor_166 gabor_059_alt gabor_100 gabor_121_alt     "2_32_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_166_059_100_121_target_position_2_4_retrieval_position_1"          gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_32_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_166_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_115 gabor_159 gabor_026 gabor_004    gabor_115_alt gabor_159 gabor_026 gabor_004_alt     "2_33_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_115_159_026_004_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_139_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_33_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1892  2992  1992      fixation_cross    gabor_093 gabor_056 gabor_076 gabor_031    gabor_093 gabor_056 gabor_076_alt gabor_031_alt     "2_34_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2000_gabor_patch_orientation_093_056_076_031_target_position_3_4_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_34_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_079 gabor_054 gabor_110 gabor_139    gabor_079_alt gabor_054 gabor_110_alt gabor_139     "2_35_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_079_054_110_139_target_position_1_3_retrieval_position_1"          gabor_079_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_35_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_097 gabor_116 gabor_027 gabor_059    gabor_097_alt gabor_116 gabor_027 gabor_059_alt     "2_36_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_097_116_027_059_target_position_1_4_retrieval_position_1"          gabor_143_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_36_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_158 gabor_099 gabor_070 gabor_178    gabor_158 gabor_099_alt gabor_070_alt gabor_178     "2_37_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_158_099_070_178_target_position_2_3_retrieval_position_2"          gabor_circ gabor_052_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_37_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_152 gabor_175 gabor_015 gabor_105    gabor_152_alt gabor_175_alt gabor_015 gabor_105     "2_38_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_152_175_015_105_target_position_1_2_retrieval_position_2"          gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_132 gabor_071 gabor_042 gabor_103    gabor_132_alt gabor_071 gabor_042 gabor_103_alt     "2_39_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_132_071_042_103_target_position_1_4_retrieval_position_1"          gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_39_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_010 gabor_118 gabor_059 gabor_144    gabor_010 gabor_118_alt gabor_059 gabor_144_alt     "2_40_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_010_118_059_144_target_position_2_4_retrieval_position_2"          gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_40_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_034 gabor_016 gabor_056 gabor_162    gabor_034_alt gabor_016 gabor_056_alt gabor_162     "2_41_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_034_016_056_162_target_position_1_3_retrieval_position_1"          gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_41_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_142 gabor_012 gabor_162 gabor_121    gabor_142_alt gabor_012 gabor_162_alt gabor_121     "2_42_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_142_012_162_121_target_position_1_3_retrieval_position_1"          gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_108 gabor_160 gabor_044 gabor_023    gabor_108_alt gabor_160 gabor_044 gabor_023_alt     "2_43_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_108_160_044_023_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_43_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_051 gabor_081 gabor_036 gabor_102    gabor_051 gabor_081_alt gabor_036_alt gabor_102     "2_44_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_051_081_036_102_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_171_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2392      fixation_cross    gabor_145 gabor_095 gabor_021 gabor_037    gabor_145 gabor_095_alt gabor_021_alt gabor_037     "2_45_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2400_gabor_patch_orientation_145_095_021_037_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_173_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_45_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_173_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_099 gabor_014 gabor_074 gabor_137    gabor_099 gabor_014_alt gabor_074_alt gabor_137     "2_46_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_099_014_074_137_target_position_2_3_retrieval_position_2"          gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_46_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2542      fixation_cross    gabor_042 gabor_177 gabor_025 gabor_131    gabor_042_alt gabor_177 gabor_025 gabor_131_alt     "2_47_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_042_177_025_131_target_position_1_4_retrieval_position_1"          gabor_042_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_47_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_069 gabor_124 gabor_158 gabor_140    gabor_069_alt gabor_124 gabor_158 gabor_140_alt     "2_48_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_069_124_158_140_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_48_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  1892      fixation_cross    gabor_180 gabor_152 gabor_091 gabor_045    gabor_180 gabor_152_alt gabor_091_alt gabor_045     "2_49_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_180_152_091_045_target_position_2_3_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_49_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_128 gabor_153 gabor_064 gabor_013    gabor_128_alt gabor_153_alt gabor_064 gabor_013     "2_50_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_128_153_064_013_target_position_1_2_retrieval_position_1"          gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_080 gabor_036 gabor_063 gabor_102    gabor_080 gabor_036 gabor_063_alt gabor_102_alt     "2_51_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_080_036_063_102_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_51_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_103 gabor_035 gabor_050 gabor_122    gabor_103 gabor_035_alt gabor_050 gabor_122_alt     "2_52_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_103_035_050_122_target_position_2_4_retrieval_position_2"          gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_52_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2042  2992  2592      fixation_cross    gabor_017 gabor_102 gabor_033 gabor_074    gabor_017 gabor_102_alt gabor_033_alt gabor_074     "2_53_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_017_102_033_074_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_53_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_123 gabor_090 gabor_042 gabor_059    gabor_123_alt gabor_090 gabor_042_alt gabor_059     "2_54_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_123_090_042_059_target_position_1_3_retrieval_position_1"          gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_54_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2242      fixation_cross    gabor_063 gabor_178 gabor_096 gabor_120    gabor_063 gabor_178_alt gabor_096_alt gabor_120     "2_55_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_063_178_096_120_target_position_2_3_retrieval_position_2"          gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_55_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  2042      fixation_cross    gabor_035 gabor_077 gabor_095 gabor_160    gabor_035_alt gabor_077 gabor_095 gabor_160_alt     "2_56_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_035_077_095_160_target_position_1_4_retrieval_position_2"          gabor_circ gabor_125_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_56_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_152 gabor_091 gabor_008 gabor_172    gabor_152 gabor_091_alt gabor_008_alt gabor_172     "2_57_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_152_091_008_172_target_position_2_3_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_57_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  1992      fixation_cross    gabor_163 gabor_121 gabor_074 gabor_106    gabor_163 gabor_121_alt gabor_074 gabor_106_alt     "2_58_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_163_121_074_106_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_58_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_050 gabor_180 gabor_134 gabor_107    gabor_050_alt gabor_180 gabor_134 gabor_107_alt     "2_59_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_050_180_134_107_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_094 gabor_022 gabor_073 gabor_139    gabor_094 gabor_022_alt gabor_073 gabor_139_alt     "2_60_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_094_022_073_139_target_position_2_4_retrieval_position_2"          gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_60_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_173 gabor_142 gabor_157 gabor_090    gabor_173_alt gabor_142 gabor_157 gabor_090_alt     "2_61_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_173_142_157_090_target_position_1_4_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_61_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2092  2992  1942      fixation_cross    gabor_161 gabor_007 gabor_142 gabor_123    gabor_161 gabor_007_alt gabor_142 gabor_123_alt     "2_62_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_1950_gabor_patch_orientation_161_007_142_123_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_62_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_107 gabor_067 gabor_155 gabor_172    gabor_107_alt gabor_067 gabor_155_alt gabor_172     "2_63_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_107_067_155_172_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_018_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_63_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_020 gabor_074 gabor_154 gabor_137    gabor_020 gabor_074 gabor_154_alt gabor_137_alt     "2_64_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_020_074_154_137_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_104_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_64_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_158 gabor_048 gabor_009 gabor_124    gabor_158 gabor_048 gabor_009_alt gabor_124_alt     "2_65_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_158_048_009_124_target_position_3_4_retrieval_position_2"          gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_048_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_007 gabor_085 gabor_114 gabor_157    gabor_007 gabor_085_alt gabor_114 gabor_157_alt     "2_66_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_007_085_114_157_target_position_2_4_retrieval_position_2"          gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_036 gabor_055 gabor_086 gabor_021    gabor_036_alt gabor_055_alt gabor_086 gabor_021     "2_67_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_036_055_086_021_target_position_1_2_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_67_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_152 gabor_065 gabor_136 gabor_173    gabor_152_alt gabor_065 gabor_136_alt gabor_173     "2_68_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_152_065_136_173_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_68_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_002 gabor_143 gabor_128 gabor_060    gabor_002 gabor_143_alt gabor_128_alt gabor_060     "2_69_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_002_143_128_060_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  1942      fixation_cross    gabor_115 gabor_091 gabor_010 gabor_153    gabor_115_alt gabor_091 gabor_010_alt gabor_153     "2_70_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_1950_gabor_patch_orientation_115_091_010_153_target_position_1_3_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_70_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  