# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_020 gabor_145 gabor_087 gabor_128    gabor_020_alt gabor_145 gabor_087 gabor_128_alt      "2_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_020_145_087_128_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_177 gabor_010 gabor_100 gabor_143    gabor_177_alt gabor_010 gabor_100_alt gabor_143      "2_2_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_177_010_100_143_target_position_1_3_retrieval_position_1"          gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_165 gabor_148 gabor_059 gabor_105    gabor_165_alt gabor_148 gabor_059 gabor_105_alt      "2_3_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_165_148_059_105_target_position_1_4_retrieval_position_1"          gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2042  2992  2092      fixation_cross    gabor_048 gabor_135 gabor_030 gabor_102    gabor_048_alt gabor_135 gabor_030_alt gabor_102      "2_4_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2100_gabor_patch_orientation_048_135_030_102_target_position_1_3_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_089 gabor_169 gabor_064 gabor_138    gabor_089 gabor_169 gabor_064_alt gabor_138_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_089_169_064_138_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_104 gabor_129 gabor_052 gabor_071    gabor_104 gabor_129_alt gabor_052 gabor_071_alt      "2_6_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_104_129_052_071_target_position_2_4_retrieval_position_2"          gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_076 gabor_126 gabor_091 gabor_166    gabor_076 gabor_126_alt gabor_091_alt gabor_166      "2_7_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_076_126_091_166_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_112 gabor_046 gabor_079 gabor_031    gabor_112_alt gabor_046_alt gabor_079 gabor_031      "2_8_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_112_046_079_031_target_position_1_2_retrieval_position_2"          gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_115 gabor_038 gabor_168 gabor_058    gabor_115_alt gabor_038_alt gabor_168 gabor_058      "2_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_115_038_168_058_target_position_1_2_retrieval_position_2"          gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_086 gabor_172 gabor_022 gabor_138    gabor_086_alt gabor_172 gabor_022 gabor_138_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_086_172_022_138_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2392      fixation_cross    gabor_013 gabor_151 gabor_119 gabor_033    gabor_013 gabor_151_alt gabor_119_alt gabor_033     "2_11_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_013_151_119_033_target_position_2_3_retrieval_position_1"          gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_179 gabor_114 gabor_001 gabor_130    gabor_179_alt gabor_114 gabor_001 gabor_130_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_179_114_001_130_target_position_1_4_retrieval_position_1"          gabor_044_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_112 gabor_057 gabor_097 gabor_039    gabor_112 gabor_057 gabor_097_alt gabor_039_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_112_057_097_039_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_009 gabor_161 gabor_076 gabor_116    gabor_009_alt gabor_161 gabor_076_alt gabor_116     "2_14_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_009_161_076_116_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_029_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1842  2992  2342      fixation_cross    gabor_068 gabor_152 gabor_135 gabor_007    gabor_068 gabor_152_alt gabor_135_alt gabor_007     "2_15_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_068_152_135_007_target_position_2_3_retrieval_position_1"          gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_068_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_013 gabor_089 gabor_167 gabor_035    gabor_013_alt gabor_089_alt gabor_167 gabor_035     "2_16_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_013_089_167_035_target_position_1_2_retrieval_position_1"          gabor_149_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_153 gabor_086 gabor_104 gabor_176    gabor_153_alt gabor_086 gabor_104_alt gabor_176     "2_17_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_153_086_104_176_target_position_1_3_retrieval_position_1"          gabor_018_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_116 gabor_035 gabor_090 gabor_005    gabor_116_alt gabor_035 gabor_090 gabor_005_alt     "2_18_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_116_035_090_005_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_118 gabor_140 gabor_167 gabor_010    gabor_118_alt gabor_140 gabor_167_alt gabor_010     "2_19_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_118_140_167_010_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_167_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_157 gabor_126 gabor_107 gabor_172    gabor_157 gabor_126 gabor_107_alt gabor_172_alt     "2_20_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_157_126_107_172_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_089 gabor_004 gabor_037 gabor_178    gabor_089 gabor_004_alt gabor_037 gabor_178_alt     "2_21_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_089_004_037_178_target_position_2_4_retrieval_position_2"          gabor_circ gabor_004_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  2192      fixation_cross    gabor_021 gabor_138 gabor_060 gabor_107    gabor_021 gabor_138 gabor_060_alt gabor_107_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2200_gabor_patch_orientation_021_138_060_107_target_position_3_4_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2542      fixation_cross    gabor_020 gabor_037 gabor_059 gabor_126    gabor_020_alt gabor_037 gabor_059_alt gabor_126     "2_23_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_020_037_059_126_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_059_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_037 gabor_098 gabor_119 gabor_159    gabor_037_alt gabor_098_alt gabor_119 gabor_159     "2_24_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_037_098_119_159_target_position_1_2_retrieval_position_1"          gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2492      fixation_cross    gabor_025 gabor_144 gabor_176 gabor_004    gabor_025 gabor_144_alt gabor_176 gabor_004_alt     "2_25_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_025_144_176_004_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_052 gabor_008 gabor_135 gabor_091    gabor_052 gabor_008 gabor_135_alt gabor_091_alt     "2_26_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_052_008_135_091_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2042  2992  1942      fixation_cross    gabor_029 gabor_175 gabor_009 gabor_093    gabor_029 gabor_175_alt gabor_009_alt gabor_093     "2_27_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_1950_gabor_patch_orientation_029_175_009_093_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_093_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_123 gabor_180 gabor_101 gabor_040    gabor_123_alt gabor_180 gabor_101_alt gabor_040     "2_28_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_123_180_101_040_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_049 gabor_177 gabor_096 gabor_114    gabor_049 gabor_177_alt gabor_096 gabor_114_alt     "2_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_049_177_096_114_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_088 gabor_143 gabor_175 gabor_110    gabor_088 gabor_143_alt gabor_175 gabor_110_alt     "2_30_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_088_143_175_110_target_position_2_4_retrieval_position_2"          gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_154 gabor_048 gabor_012 gabor_172    gabor_154 gabor_048_alt gabor_012_alt gabor_172     "2_31_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_154_048_012_172_target_position_2_3_retrieval_position_2"          gabor_circ gabor_095_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1842  2992  2142      fixation_cross    gabor_081 gabor_053 gabor_131 gabor_015    gabor_081_alt gabor_053 gabor_131 gabor_015_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2150_gabor_patch_orientation_081_053_131_015_target_position_1_4_retrieval_position_2"          gabor_circ gabor_053_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_136 gabor_011 gabor_067 gabor_088    gabor_136 gabor_011 gabor_067_alt gabor_088_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_136_011_067_088_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  1892      fixation_cross    gabor_057 gabor_117 gabor_035 gabor_080    gabor_057_alt gabor_117_alt gabor_035 gabor_080     "2_34_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_1900_gabor_patch_orientation_057_117_035_080_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_035_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_122 gabor_016 gabor_165 gabor_090    gabor_122 gabor_016_alt gabor_165 gabor_090_alt     "2_35_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_122_016_165_090_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_090_framed    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_044 gabor_172 gabor_150 gabor_015    gabor_044 gabor_172_alt gabor_150 gabor_015_alt     "2_36_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_044_172_150_015_target_position_2_4_retrieval_position_2"          gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_074 gabor_118 gabor_180 gabor_139    gabor_074_alt gabor_118_alt gabor_180 gabor_139     "2_37_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_074_118_180_139_target_position_1_2_retrieval_position_2"          gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_074 gabor_111 gabor_046 gabor_130    gabor_074_alt gabor_111_alt gabor_046 gabor_130     "2_38_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_074_111_046_130_target_position_1_2_retrieval_position_1"          gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_109 gabor_084 gabor_066 gabor_040    gabor_109_alt gabor_084 gabor_066_alt gabor_040     "2_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_109_084_066_040_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_066_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_007 gabor_092 gabor_119 gabor_074    gabor_007 gabor_092_alt gabor_119 gabor_074_alt     "2_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_007_092_119_074_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  2042      fixation_cross    gabor_047 gabor_121 gabor_008 gabor_161    gabor_047 gabor_121 gabor_008_alt gabor_161_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2050_gabor_patch_orientation_047_121_008_161_target_position_3_4_retrieval_position_1"          gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_092_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_134 gabor_160 gabor_113 gabor_096    gabor_134_alt gabor_160_alt gabor_113 gabor_096     "2_42_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_134_160_113_096_target_position_1_2_retrieval_position_2"          gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_114 gabor_078 gabor_037 gabor_006    gabor_114_alt gabor_078 gabor_037_alt gabor_006     "2_43_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_114_078_037_006_target_position_1_3_retrieval_position_1"          gabor_114_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_113 gabor_098 gabor_066 gabor_172    gabor_113 gabor_098_alt gabor_066 gabor_172_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_113_098_066_172_target_position_2_4_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_155 gabor_107 gabor_048 gabor_086    gabor_155_alt gabor_107 gabor_048 gabor_086_alt     "2_45_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_155_107_048_086_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  1942      fixation_cross    gabor_003 gabor_081 gabor_126 gabor_159    gabor_003_alt gabor_081 gabor_126_alt gabor_159     "2_46_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_003_081_126_159_target_position_1_3_retrieval_position_2"          gabor_circ gabor_036_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_086 gabor_067 gabor_042 gabor_006    gabor_086_alt gabor_067_alt gabor_042 gabor_006     "2_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_086_067_042_006_target_position_1_2_retrieval_position_2"          gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_172 gabor_119 gabor_031 gabor_059    gabor_172 gabor_119 gabor_031_alt gabor_059_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_172_119_031_059_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_059_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_129 gabor_066 gabor_146 gabor_104    gabor_129_alt gabor_066_alt gabor_146 gabor_104     "2_49_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_129_066_146_104_target_position_1_2_retrieval_position_2"          gabor_circ gabor_020_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  1942      fixation_cross    gabor_079 gabor_094 gabor_116 gabor_030    gabor_079 gabor_094_alt gabor_116 gabor_030_alt     "2_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_079_094_116_030_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_164_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_164_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_131 gabor_013 gabor_157 gabor_098    gabor_131_alt gabor_013 gabor_157 gabor_098_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_131_013_157_098_target_position_1_4_retrieval_position_1"          gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_179 gabor_056 gabor_072 gabor_113    gabor_179 gabor_056 gabor_072_alt gabor_113_alt     "2_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_179_056_072_113_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_129 gabor_169 gabor_039 gabor_108    gabor_129_alt gabor_169_alt gabor_039 gabor_108     "2_53_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_129_169_039_108_target_position_1_2_retrieval_position_1"          gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1742  2992  1992      fixation_cross    gabor_163 gabor_109 gabor_090 gabor_025    gabor_163 gabor_109_alt gabor_090_alt gabor_025     "2_54_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2000_gabor_patch_orientation_163_109_090_025_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_093 gabor_010 gabor_035 gabor_118    gabor_093 gabor_010_alt gabor_035_alt gabor_118     "2_55_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_093_010_035_118_target_position_2_3_retrieval_position_2"          gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_117 gabor_065 gabor_091 gabor_173    gabor_117 gabor_065_alt gabor_091 gabor_173_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_117_065_091_173_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_130 gabor_175 gabor_158 gabor_088    gabor_130_alt gabor_175_alt gabor_158 gabor_088     "2_57_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_130_175_158_088_target_position_1_2_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_137 gabor_101 gabor_165 gabor_075    gabor_137 gabor_101 gabor_165_alt gabor_075_alt     "2_58_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_137_101_165_075_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_119_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_068 gabor_016 gabor_106 gabor_084    gabor_068 gabor_016 gabor_106_alt gabor_084_alt     "2_59_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_068_016_106_084_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_127 gabor_177 gabor_157 gabor_017    gabor_127 gabor_177_alt gabor_157 gabor_017_alt     "2_60_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_127_177_157_017_target_position_2_4_retrieval_position_2"          gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_085 gabor_068 gabor_103 gabor_129    gabor_085 gabor_068_alt gabor_103 gabor_129_alt     "2_61_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_085_068_103_129_target_position_2_4_retrieval_position_2"          gabor_circ gabor_021_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_157 gabor_110 gabor_046 gabor_131    gabor_157_alt gabor_110 gabor_046_alt gabor_131     "2_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_157_110_046_131_target_position_1_3_retrieval_position_1"          gabor_157_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  1892      fixation_cross    gabor_077 gabor_148 gabor_095 gabor_117    gabor_077 gabor_148_alt gabor_095_alt gabor_117     "2_63_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_077_148_095_117_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_165_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_165_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_141 gabor_054 gabor_024 gabor_084    gabor_141 gabor_054_alt gabor_024_alt gabor_084     "2_64_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_141_054_024_084_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  2592      fixation_cross    gabor_174 gabor_132 gabor_022 gabor_099    gabor_174 gabor_132_alt gabor_022_alt gabor_099     "2_65_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2600_gabor_patch_orientation_174_132_022_099_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_008 gabor_097 gabor_045 gabor_175    gabor_008 gabor_097 gabor_045_alt gabor_175_alt     "2_66_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_008_097_045_175_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_061 gabor_168 gabor_026 gabor_099    gabor_061_alt gabor_168 gabor_026 gabor_099_alt     "2_67_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_061_168_026_099_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_134 gabor_097 gabor_082 gabor_167    gabor_134_alt gabor_097_alt gabor_082 gabor_167     "2_68_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_134_097_082_167_target_position_1_2_retrieval_position_2"          gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  2342      fixation_cross    gabor_147 gabor_020 gabor_077 gabor_108    gabor_147 gabor_020_alt gabor_077 gabor_108_alt     "2_69_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_147_020_077_108_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_089 gabor_047 gabor_008 gabor_178    gabor_089_alt gabor_047 gabor_008_alt gabor_178     "2_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_089_047_008_178_target_position_1_3_retrieval_position_1"          gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 